# Extract Copper electromagnetic material data from the exact local
# TOPAS 4.2.p3 / Geant4 11.3.2 physics configuration used by run_dose_only.
i:Ts/Seed = 20260729
i:Ts/NumberOfThreads = 1
b:Gr/Enable = "False"

s:Ge/World/Type = "TsBox"
s:Ge/World/Material = "Air"
d:Ge/World/HLX = 50 mm
d:Ge/World/HLY = 50 mm
d:Ge/World/HLZ = 50 mm

s:Ge/Sample/Parent = "World"
s:Ge/Sample/Type = "TsBox"
s:Ge/Sample/Material = "Copper"
d:Ge/Sample/HLX = 20 mm
d:Ge/Sample/HLY = 20 mm
d:Ge/Sample/HLZ = 20 mm
d:Ge/Sample/MaxStepSize = 1 mm

s:Ge/BeamPosition/Parent = "World"
s:Ge/BeamPosition/Type = "Group"
# Birth inside Copper so both query scorers see the material on the first step;
# this run is a static material query, not a range simulation.
d:Ge/BeamPosition/TransZ = 0 mm

s:So/CarbonBeam/Type = "Beam"
s:So/CarbonBeam/Component = "BeamPosition"
s:So/CarbonBeam/BeamParticle = "GenericIon(6,12,6)"
d:So/CarbonBeam/BeamEnergy = 2150 MeV
u:So/CarbonBeam/BeamEnergySpread = 0
s:So/CarbonBeam/BeamPositionDistribution = "None"
s:So/CarbonBeam/BeamAngularDistribution = "None"
i:So/CarbonBeam/NumberOfHistoriesInRun = 1

sv:Ph/Default/Modules = 6 "g4em-standard_opt4" "g4h-phy_QGSP_BERT_HP" "g4decay" "g4ion-binarycascade" "g4h-elastic_HP" "g4stopping"
d:Ph/Default/CutForAllParticles = 0.05 mm
d:Ph/Default/EMRangeMax = 6 GeV

s:Sc/CarbonStoppingPower/Quantity = "CarbonStoppingPowerNtuple"
s:Sc/CarbonStoppingPower/Component = "Sample"
s:Sc/CarbonStoppingPower/OutputFile = "output/copper_c12_stopping_power"
s:Sc/CarbonStoppingPower/OutputType = "ASCII"
s:Sc/CarbonStoppingPower/IfOutputFileAlreadyExists = "Overwrite"

s:Sc/MaterialProperties/Quantity = "CarbonMaterialPropertiesNtuple"
s:Sc/MaterialProperties/Component = "Sample"
s:Sc/MaterialProperties/OutputFile = "output/copper_material_properties"
s:Sc/MaterialProperties/OutputType = "ASCII"
s:Sc/MaterialProperties/IfOutputFileAlreadyExists = "Overwrite"
