# Independent Copper MCS benchmark. Derived cases override foil thickness,
# film position and output name. Nuclear physics is absent by construction.
i:Ts/Seed = 20260730
i:Ts/NumberOfThreads = 40
i:Ts/ShowHistoryCountAtInterval = 10000
b:Gr/Enable = "False"
b:Ge/CheckForOverlaps = "True"

s:Ge/World/Type = "TsBox"
s:Ge/World/Material = "G4_Galactic"
d:Ge/World/HLX = 50 mm
d:Ge/World/HLY = 50 mm
d:Ge/World/HLZ = 50 mm

s:Ge/Foil/Type = "TsBox"
s:Ge/Foil/Parent = "World"
s:Ge/Foil/Material = "Copper"
d:Ge/Foil/HLX = 20 mm
d:Ge/Foil/HLY = 20 mm
d:Ge/Foil/HLZ = 0.5 mm
d:Ge/Foil/MaxStepSize = 0.01 mm

s:Ge/ExitFilm/Type = "TsBox"
s:Ge/ExitFilm/Parent = "World"
s:Ge/ExitFilm/Material = "G4_Galactic"
d:Ge/ExitFilm/HLX = 20 mm
d:Ge/ExitFilm/HLY = 20 mm
d:Ge/ExitFilm/HLZ = 0.001 mm
d:Ge/ExitFilm/TransZ = 0.502 mm

s:Ge/BeamPosition/Type = "Group"
s:Ge/BeamPosition/Parent = "World"
d:Ge/BeamPosition/TransZ = -10 mm
# A TOPAS Beam points along its component's local -Z axis.
d:Ge/BeamPosition/RotY = 180 deg

s:So/CarbonBeam/Type = "Beam"
s:So/CarbonBeam/Component = "BeamPosition"
s:So/CarbonBeam/BeamParticle = "GenericIon(6,12,6)"
d:So/CarbonBeam/BeamEnergy = 2150 MeV
u:So/CarbonBeam/BeamEnergySpread = 0
s:So/CarbonBeam/BeamPositionDistribution = "None"
s:So/CarbonBeam/BeamAngularDistribution = "None"
i:So/CarbonBeam/NumberOfHistoriesInRun = 100000

sv:Ph/Default/Modules = 1 "g4em-standard_opt4"
d:Ph/Default/CutForAllParticles = 0.05 mm

s:Sc/FoilExit/Quantity = "PhaseSpace"
s:Sc/FoilExit/Surface = "ExitFilm/ZMinusSurface"
s:Sc/FoilExit/OnlyIncludeParticlesGoing = "In"
s:Sc/FoilExit/OutputType = "ASCII"
s:Sc/FoilExit/OutputFile = "output/copper_mcs_foil_1mm"
s:Sc/FoilExit/IfOutputFileAlreadyExists = "Overwrite"
i:Sc/FoilExit/OutputBufferSize = 100000
b:Sc/FoilExit/IncludeRunID = "True"
b:Sc/FoilExit/IncludeEventID = "True"
b:Sc/FoilExit/IncludeTrackID = "True"
b:Sc/FoilExit/IncludeParentID = "True"
