# Development sample of correlated primary C-12 inelastic final states in
# Copper. Dose and LET are intentionally absent.
i:Ts/Seed = 20260731
i:Ts/NumberOfThreads = 40
i:Ts/ShowHistoryCountAtInterval = 2000
b:Gr/Enable = "False"
b:Ge/CheckForOverlaps = "True"

s:Ge/World/Type = "TsBox"
s:Ge/World/Material = "G4_Galactic"
d:Ge/World/HLX = 100 mm
d:Ge/World/HLY = 100 mm
d:Ge/World/HLZ = 100 mm

s:Ge/CopperTarget/Type = "TsBox"
s:Ge/CopperTarget/Parent = "World"
s:Ge/CopperTarget/Material = "Copper"
d:Ge/CopperTarget/HLX = 50 mm
d:Ge/CopperTarget/HLY = 50 mm
d:Ge/CopperTarget/HLZ = 30 mm
d:Ge/CopperTarget/MaxStepSize = 0.05 mm

s:Ge/BeamPosition/Type = "Group"
s:Ge/BeamPosition/Parent = "World"
d:Ge/BeamPosition/TransZ = -40 mm
d:Ge/BeamPosition/RotY = 180 deg

s:So/CarbonBeam/Type = "Beam"
s:So/CarbonBeam/Component = "BeamPosition"
s:So/CarbonBeam/BeamParticle = "GenericIon(6,12,6)"
d:So/CarbonBeam/BeamEnergy = 2150 MeV
u:So/CarbonBeam/BeamEnergySpread = 0
s:So/CarbonBeam/BeamPositionDistribution = "None"
s:So/CarbonBeam/BeamAngularDistribution = "None"
i:So/CarbonBeam/NumberOfHistoriesInRun = 20000

sv:Ph/Default/Modules = 6 "g4em-standard_opt4" "g4h-phy_QGSP_BERT_HP" "g4decay" "g4ion-binarycascade" "g4h-elastic_HP" "g4stopping"
d:Ph/Default/CutForAllParticles = 0.05 mm
d:Ph/Default/EMRangeMax = 6 GeV

s:Sc/CopperReactions/Quantity = "CarbonReactionNtuple"
s:Sc/CopperReactions/Component = "CopperTarget"
s:Sc/CopperReactions/OutputFile = "output/copper_reactions_2150MeV_20k"
s:Sc/CopperReactions/OutputType = "ASCII"
s:Sc/CopperReactions/IfOutputFileAlreadyExists = "Overwrite"
