# Full-Copper TOPAS dose reference for the same central 10k spot used by the
# phase-space and GPU absorbing-geometry smoke cases.
includeFile = run_dose_only.txt

i:Ts/Seed = 20260728
d:Tf/TimelineEnd = 1 ms
i:Tf/NumberOfSequentialTimes = 1
s:Sc/DoseAtPhantomP/OutputFile = "output/minibeam_center_dose_10k"

# Absolute overrides in this top-level file avoid ambiguous parameter chains
# while replacing the included 961-spot TimeFeature vectors.
dv:Tf/Scatterer1/L0/Times = 1 1 ms
dv:Tf/Scatterer1/L1/Times = Tf/Scatterer1/L0/Times ms
dv:Tf/Scatterer1/L2/Times = Tf/Scatterer1/L0/Times ms
dv:Tf/Scatterer1/L3/Times = Tf/Scatterer1/L0/Times ms
dv:Tf/Scatterer1/L4/Times = Tf/Scatterer1/L0/Times ms
dv:Tf/Scatterer1/L5/Times = Tf/Scatterer1/L0/Times ms
dv:Tf/Scatterer1/L6/Times = Tf/Scatterer1/L0/Times ms
dv:Tf/Scatterer1/L7/Times = Tf/Scatterer1/L0/Times ms
dv:Tf/Scatterer1/L8/Times = Tf/Scatterer1/L0/Times ms
dv:Tf/Scatterer1/L9/Times = Tf/Scatterer1/L0/Times ms
dv:Tf/Scatterer1/L10/Times = Tf/Scatterer1/L0/Times ms
dv:Tf/Scatterer1/L11/Times = Tf/Scatterer1/L0/Times ms
dv:Tf/Scatterer1/L12/Times = Tf/Scatterer1/L0/Times ms
dv:Tf/Scatterer1/L13/Times = Tf/Scatterer1/L0/Times ms
dv:Tf/Scatterer1/L14/Times = Tf/Scatterer1/L0/Times ms
iv:Tf/Scatterer1/L0/Values = 1 481
dv:Tf/Scatterer1/L1/Values = 1 2150 MeV
dv:Tf/Scatterer1/L2/Values = 1 2150 MeV
uv:Tf/Scatterer1/L3/Values = 1 1.2
iv:Tf/Scatterer1/L4/Values = 1 10000
dv:Tf/Scatterer1/L5/Values = 1 0 mm
dv:Tf/Scatterer1/L6/Values = 1 0 mm
dv:Tf/Scatterer1/L7/Values = 1 90 deg
dv:Tf/Scatterer1/L8/Values = 1 0 deg
dv:Tf/Scatterer1/L9/Values = 1 2.5061 mm
uv:Tf/Scatterer1/L10/Values = 1 0.0051
uv:Tf/Scatterer1/L11/Values = 1 0.4177
dv:Tf/Scatterer1/L12/Values = 1 2.4669 mm
uv:Tf/Scatterer1/L13/Values = 1 0.0041
uv:Tf/Scatterer1/L14/Values = 1 0.8069
