# Generated matched 1D minibeam validation case.
includeFile = run_dose_center_10k.txt

i:Ts/Seed = 20260728
i:Ts/NumberOfThreads = 40
i:Ts/ShowHistoryCountAtInterval = 10000
# Cover the full 4.8 GeV total kinetic energy of 400 MeV/u C-12 and avoid
# clamping the dedicated alpha/He3 electromagnetic tables.
d:Ph/Default/EMRangeMax = 6 GeV
i:Tf/NumberOfSequentialTimes = 1
d:Tf/TimelineEnd = 1 ms

dv:Tf/Scatterer1/L1/Values = 1 1200 MeV
dv:Tf/Scatterer1/L2/Values = 1 1200 MeV
iv:Tf/Scatterer1/L4/Values = 1 100000

d:Ge/Box/HLY = 250 mm
d:Ge/Box/TransY = 310 mm
d:Ge/Box2/HLY = 250 mm

s:Sc/DoseAtPhantomP/OutputFile = "output/minibeam_energy_e100_100000_total"
i:Sc/DoseAtPhantomP/XBins = 1
i:Sc/DoseAtPhantomP/YBins = 5000
i:Sc/DoseAtPhantomP/ZBins = 1

s:Sc/PrimaryC12/Quantity = "CarbonDoseOrigin"
s:Sc/PrimaryC12/Component = "Box2"
s:Sc/PrimaryC12/OutputFile = "output/minibeam_energy_e100_100000_primary_c12"
s:Sc/PrimaryC12/OutputType = "binary"
s:Sc/PrimaryC12/IfOutputFileAlreadyExists = "Overwrite"
s:Sc/PrimaryC12/OriginCategory = "primary_c12"
i:Sc/PrimaryC12/XBins = 1
i:Sc/PrimaryC12/YBins = 5000
i:Sc/PrimaryC12/ZBins = 1
sv:Sc/PrimaryC12/Report = 1 "Sum"

s:Sc/SecondaryCarbon/Quantity = "CarbonDoseOrigin"
s:Sc/SecondaryCarbon/Component = "Box2"
s:Sc/SecondaryCarbon/OutputFile = "output/minibeam_energy_e100_100000_secondary_carbon"
s:Sc/SecondaryCarbon/OutputType = "binary"
s:Sc/SecondaryCarbon/IfOutputFileAlreadyExists = "Overwrite"
s:Sc/SecondaryCarbon/OriginCategory = "secondary_carbon"
i:Sc/SecondaryCarbon/XBins = 1
i:Sc/SecondaryCarbon/YBins = 5000
i:Sc/SecondaryCarbon/ZBins = 1
sv:Sc/SecondaryCarbon/Report = 1 "Sum"

s:Sc/Boron/Quantity = "CarbonDoseOrigin"
s:Sc/Boron/Component = "Box2"
s:Sc/Boron/OutputFile = "output/minibeam_energy_e100_100000_boron"
s:Sc/Boron/OutputType = "binary"
s:Sc/Boron/IfOutputFileAlreadyExists = "Overwrite"
s:Sc/Boron/OriginCategory = "boron"
i:Sc/Boron/XBins = 1
i:Sc/Boron/YBins = 5000
i:Sc/Boron/ZBins = 1
sv:Sc/Boron/Report = 1 "Sum"

s:Sc/Beryllium/Quantity = "CarbonDoseOrigin"
s:Sc/Beryllium/Component = "Box2"
s:Sc/Beryllium/OutputFile = "output/minibeam_energy_e100_100000_beryllium"
s:Sc/Beryllium/OutputType = "binary"
s:Sc/Beryllium/IfOutputFileAlreadyExists = "Overwrite"
s:Sc/Beryllium/OriginCategory = "beryllium"
i:Sc/Beryllium/XBins = 1
i:Sc/Beryllium/YBins = 5000
i:Sc/Beryllium/ZBins = 1
sv:Sc/Beryllium/Report = 1 "Sum"

s:Sc/Lithium/Quantity = "CarbonDoseOrigin"
s:Sc/Lithium/Component = "Box2"
s:Sc/Lithium/OutputFile = "output/minibeam_energy_e100_100000_lithium"
s:Sc/Lithium/OutputType = "binary"
s:Sc/Lithium/IfOutputFileAlreadyExists = "Overwrite"
s:Sc/Lithium/OriginCategory = "lithium"
i:Sc/Lithium/XBins = 1
i:Sc/Lithium/YBins = 5000
i:Sc/Lithium/ZBins = 1
sv:Sc/Lithium/Report = 1 "Sum"

s:Sc/Helium/Quantity = "CarbonDoseOrigin"
s:Sc/Helium/Component = "Box2"
s:Sc/Helium/OutputFile = "output/minibeam_energy_e100_100000_helium"
s:Sc/Helium/OutputType = "binary"
s:Sc/Helium/IfOutputFileAlreadyExists = "Overwrite"
s:Sc/Helium/OriginCategory = "helium"
i:Sc/Helium/XBins = 1
i:Sc/Helium/YBins = 5000
i:Sc/Helium/ZBins = 1
sv:Sc/Helium/Report = 1 "Sum"

s:Sc/Proton/Quantity = "CarbonDoseOrigin"
s:Sc/Proton/Component = "Box2"
s:Sc/Proton/OutputFile = "output/minibeam_energy_e100_100000_proton"
s:Sc/Proton/OutputType = "binary"
s:Sc/Proton/IfOutputFileAlreadyExists = "Overwrite"
s:Sc/Proton/OriginCategory = "proton"
i:Sc/Proton/XBins = 1
i:Sc/Proton/YBins = 5000
i:Sc/Proton/ZBins = 1
sv:Sc/Proton/Report = 1 "Sum"

s:Sc/OtherCharged/Quantity = "CarbonDoseOrigin"
s:Sc/OtherCharged/Component = "Box2"
s:Sc/OtherCharged/OutputFile = "output/minibeam_energy_e100_100000_other_charged"
s:Sc/OtherCharged/OutputType = "binary"
s:Sc/OtherCharged/IfOutputFileAlreadyExists = "Overwrite"
s:Sc/OtherCharged/OriginCategory = "other_charged"
i:Sc/OtherCharged/XBins = 1
i:Sc/OtherCharged/YBins = 5000
i:Sc/OtherCharged/ZBins = 1
sv:Sc/OtherCharged/Report = 1 "Sum"

s:Sc/Neutron/Quantity = "CarbonDoseOrigin"
s:Sc/Neutron/Component = "Box2"
s:Sc/Neutron/OutputFile = "output/minibeam_energy_e100_100000_neutron"
s:Sc/Neutron/OutputType = "binary"
s:Sc/Neutron/IfOutputFileAlreadyExists = "Overwrite"
s:Sc/Neutron/OriginCategory = "neutron"
i:Sc/Neutron/XBins = 1
i:Sc/Neutron/YBins = 5000
i:Sc/Neutron/ZBins = 1
sv:Sc/Neutron/Report = 1 "Sum"

s:Sc/Gamma/Quantity = "CarbonDoseOrigin"
s:Sc/Gamma/Component = "Box2"
s:Sc/Gamma/OutputFile = "output/minibeam_energy_e100_100000_gamma"
s:Sc/Gamma/OutputType = "binary"
s:Sc/Gamma/IfOutputFileAlreadyExists = "Overwrite"
s:Sc/Gamma/OriginCategory = "gamma"
i:Sc/Gamma/XBins = 1
i:Sc/Gamma/YBins = 5000
i:Sc/Gamma/ZBins = 1
sv:Sc/Gamma/Report = 1 "Sum"

s:Sc/NeutralOther/Quantity = "CarbonDoseOrigin"
s:Sc/NeutralOther/Component = "Box2"
s:Sc/NeutralOther/OutputFile = "output/minibeam_energy_e100_100000_neutral_other"
s:Sc/NeutralOther/OutputType = "binary"
s:Sc/NeutralOther/IfOutputFileAlreadyExists = "Overwrite"
s:Sc/NeutralOther/OriginCategory = "neutral_other"
i:Sc/NeutralOther/XBins = 1
i:Sc/NeutralOther/YBins = 5000
i:Sc/NeutralOther/ZBins = 1
sv:Sc/NeutralOther/Report = 1 "Sum"

s:Sc/Unresolved/Quantity = "CarbonDoseOrigin"
s:Sc/Unresolved/Component = "Box2"
s:Sc/Unresolved/OutputFile = "output/minibeam_energy_e100_100000_unresolved"
s:Sc/Unresolved/OutputType = "binary"
s:Sc/Unresolved/IfOutputFileAlreadyExists = "Overwrite"
s:Sc/Unresolved/OriginCategory = "unresolved"
i:Sc/Unresolved/XBins = 1
i:Sc/Unresolved/YBins = 5000
i:Sc/Unresolved/ZBins = 1
sv:Sc/Unresolved/Report = 1 "Sum"

