# Minibeam heterogeneous-material validation:
# 200 MeV/u C-12 through the validated Copper collimator, followed by
# 50 mm water + 20 mm compact bone + 80 mm water.
includeFile = run_dose_center_10k.txt

i:Ts/Seed = 20260728
i:Ts/NumberOfThreads = 40
i:Ts/ShowHistoryCountAtInterval = 10000
i:Tf/NumberOfSequentialTimes = 1
d:Tf/TimelineEnd = 1 ms
d:Ph/Default/EMRangeMax = 6 GeV

dv:Tf/Scatterer1/L1/Values = 1 2400 MeV
dv:Tf/Scatterer1/L2/Values = 1 2400 MeV
iv:Tf/Scatterer1/L4/Values = 1 100000

# Water entrance is world Y=60 mm. The 150 mm phantom is centered at Y=135 mm.
d:Ge/Box/HLY = 75 mm
d:Ge/Box/TransY = 135 mm
d:Ge/Box2/HLY = 75 mm

# Full-field compact-bone slab at water-equivalent depth 50--70 mm.
s:Ge/BoneSlab/Parent = "Box2"
s:Ge/BoneSlab/Type = "TsBox"
s:Ge/BoneSlab/Material = "G4_BONE_COMPACT_ICRU"
d:Ge/BoneSlab/HLX = 49.999 mm
d:Ge/BoneSlab/HLY = 10 mm
d:Ge/BoneSlab/HLZ = 19.999 mm
d:Ge/BoneSlab/TransX = 0 mm
d:Ge/BoneSlab/TransY = -15 mm
d:Ge/BoneSlab/TransZ = 0 mm
d:Ge/BoneSlab/MaxStepSize = 0.1 mm

# 0.2 mm across the slits, 0.5 mm in depth, one 40 mm along-slit bin.
s:Sc/DoseAtPhantomP/OutputFile = "output/minibeam_hetero_bone_e200_100k_total"
i:Sc/DoseAtPhantomP/XBins = 500
i:Sc/DoseAtPhantomP/YBins = 300
i:Sc/DoseAtPhantomP/ZBins = 1
