# Central-spot coordinate/physics diagnostic. It records particles at the
# collimator entrance/exit and water entrance without allocating the dose grid.
includeFile = spots_single_center.txt
includeFile = aperture.txt

i:Ts/Seed = 20260728
i:Ts/NumberOfThreads = 40
i:Ts/ShowHistoryCountAtInterval = 1000
b:Gr/Enable = "False"
b:Ge/CheckForOverlaps = "True"

s:Ge/World/Material = "Air"
d:Ge/World/HLX = 2.0 m
d:Ge/World/HLY = 2.0 m
d:Ge/World/HLZ = 2.0 m

s:Ge/Box/Type = "TsBox"
s:Ge/Box/Parent = "World"
s:Ge/Box/Material = "G4_WATER"
d:Ge/Box/HLX = 50.0 mm
d:Ge/Box/HLY = 50.0 mm
d:Ge/Box/HLZ = 50.0 mm
d:Ge/Box/TransY = 110.0 mm
b:Ge/Box/IsVisible = "False"

sv:Ph/Default/Modules = 6 "g4em-standard_opt4" "g4h-phy_QGSP_BERT_HP" "g4decay" "g4ion-binarycascade" "g4h-elastic_HP" "g4stopping"
d:Ph/Default/CutForAllParticles = 0.05 mm
d:Ph/Default/EMRangeMax = 6 GeV

s:Ge/BeamPosition2/Parent = "World"
s:Ge/BeamPosition2/Type = "Group"
d:Ge/BeamPosition2/TransX = Tf/Scatterer1/L5/Value mm
d:Ge/BeamPosition2/TransY = -0.45 m
d:Ge/BeamPosition2/TransZ = Tf/Scatterer1/L6/Value mm
d:Ge/BeamPosition2/RotX = Tf/Scatterer1/L7/Value deg
d:Ge/BeamPosition2/RotY = Tf/Scatterer1/L8/Value deg
d:Ge/BeamPosition2/RotZ = 0.0 deg

s:So/CarbonSource/Type = "emittance"
s:So/CarbonSource/Component = "BeamPosition2"
s:So/CarbonSource/BeamParticle = "GenericIon(6,12,6)"
s:So/CarbonSource/Distribution = "BiGaussian"
d:So/CarbonSource/BeamEnergy = Tf/Scatterer1/L2/Value MeV
u:So/CarbonSource/BeamEnergySpread = Tf/Scatterer1/L3/Value
d:So/CarbonSource/SigmaX = Tf/Scatterer1/L9/Value mm
u:So/CarbonSource/SigmaXprime = Tf/Scatterer1/L10/Value
u:So/CarbonSource/CorrelationX = Tf/Scatterer1/L11/Value
d:So/CarbonSource/SigmaY = Tf/Scatterer1/L12/Value mm
u:So/CarbonSource/SigmaYprime = Tf/Scatterer1/L13/Value
u:So/CarbonSource/CorrelationY = Tf/Scatterer1/L14/Value
i:So/CarbonSource/NumberOfHistoriesInRun = Tf/Scatterer1/L4/Value

d:Tf/TimelineEnd = 1 ms
i:Tf/NumberOfSequentialTimes = 1

# Thin air films are separated from the Copper and water boundaries by 0.01 mm.
s:Ge/CollimatorEntranceFilm/Type = "TsBox"
s:Ge/CollimatorEntranceFilm/Parent = "World"
s:Ge/CollimatorEntranceFilm/Material = "Air"
d:Ge/CollimatorEntranceFilm/HLX = 70.0 mm
d:Ge/CollimatorEntranceFilm/HLY = 0.005 mm
d:Ge/CollimatorEntranceFilm/HLZ = 70.0 mm
d:Ge/CollimatorEntranceFilm/TransY = -60.015 mm

s:Ge/CollimatorExitFilm/Type = "TsBox"
s:Ge/CollimatorExitFilm/Parent = "World"
s:Ge/CollimatorExitFilm/Material = "Air"
d:Ge/CollimatorExitFilm/HLX = 70.0 mm
d:Ge/CollimatorExitFilm/HLY = 0.005 mm
d:Ge/CollimatorExitFilm/HLZ = 70.0 mm
d:Ge/CollimatorExitFilm/TransY = 0.015 mm

s:Ge/WaterEntranceFilm/Type = "TsBox"
s:Ge/WaterEntranceFilm/Parent = "World"
s:Ge/WaterEntranceFilm/Material = "Air"
d:Ge/WaterEntranceFilm/HLX = 70.0 mm
d:Ge/WaterEntranceFilm/HLY = 0.005 mm
d:Ge/WaterEntranceFilm/HLZ = 70.0 mm
d:Ge/WaterEntranceFilm/TransY = 59.985 mm

s:Sc/AtCollimatorEntrance/Quantity = "PhaseSpace"
s:Sc/AtCollimatorEntrance/Surface = "CollimatorEntranceFilm/YMinusSurface"
s:Sc/AtCollimatorEntrance/OnlyIncludeParticlesGoing = "In"
s:Sc/AtCollimatorEntrance/OutputType = "ASCII"
s:Sc/AtCollimatorEntrance/OutputFile = "output/minibeam_center_collimator_entrance"
s:Sc/AtCollimatorEntrance/IfOutputFileAlreadyExists = "Overwrite"
i:Sc/AtCollimatorEntrance/OutputBufferSize = 10000
b:Sc/AtCollimatorEntrance/IncludeRunID = "True"
b:Sc/AtCollimatorEntrance/IncludeEventID = "True"
b:Sc/AtCollimatorEntrance/IncludeTrackID = "True"
b:Sc/AtCollimatorEntrance/IncludeParentID = "True"

s:Sc/AtCollimatorExit/Quantity = "PhaseSpace"
s:Sc/AtCollimatorExit/Surface = "CollimatorExitFilm/YMinusSurface"
s:Sc/AtCollimatorExit/OnlyIncludeParticlesGoing = "In"
s:Sc/AtCollimatorExit/OutputType = "ASCII"
s:Sc/AtCollimatorExit/OutputFile = "output/minibeam_center_collimator_exit"
s:Sc/AtCollimatorExit/IfOutputFileAlreadyExists = "Overwrite"
i:Sc/AtCollimatorExit/OutputBufferSize = 10000
b:Sc/AtCollimatorExit/IncludeRunID = "True"
b:Sc/AtCollimatorExit/IncludeEventID = "True"
b:Sc/AtCollimatorExit/IncludeTrackID = "True"
b:Sc/AtCollimatorExit/IncludeParentID = "True"

s:Sc/AtWaterEntrance/Quantity = "PhaseSpace"
s:Sc/AtWaterEntrance/Surface = "WaterEntranceFilm/YMinusSurface"
s:Sc/AtWaterEntrance/OnlyIncludeParticlesGoing = "In"
s:Sc/AtWaterEntrance/OutputType = "ASCII"
s:Sc/AtWaterEntrance/OutputFile = "output/minibeam_center_water_entrance"
s:Sc/AtWaterEntrance/IfOutputFileAlreadyExists = "Overwrite"
i:Sc/AtWaterEntrance/OutputBufferSize = 10000
b:Sc/AtWaterEntrance/IncludeRunID = "True"
b:Sc/AtWaterEntrance/IncludeEventID = "True"
b:Sc/AtWaterEntrance/IncludeTrackID = "True"
b:Sc/AtWaterEntrance/IncludeParentID = "True"
