# Generated multi-energy minibeam phase-space diagnostic.
includeFile = run_phase_space_center.txt

i:Ts/Seed = 20260728
i:Ts/NumberOfThreads = 40
i:Ts/ShowHistoryCountAtInterval = 10000
d:Ph/Default/EMRangeMax = 6 GeV
dv:Tf/Scatterer1/L1/Values = 1 4800 MeV
dv:Tf/Scatterer1/L2/Values = 1 4800 MeV
iv:Tf/Scatterer1/L4/Values = 1 100000

s:Sc/AtCollimatorEntrance/OutputFile = "output/minibeam_phase_e400_100000_collimator_entrance"
s:Sc/AtCollimatorExit/OutputFile = "output/minibeam_phase_e400_100000_collimator_exit"
s:Sc/AtWaterEntrance/OutputFile = "output/minibeam_phase_e400_100000_water_entrance"
