# Generated independent secondary-ion Copper foil benchmark.
i:Ts/Seed = 20261341
i:Ts/NumberOfThreads = 40
i:Ts/ShowHistoryCountAtInterval = 1000
b:Gr/Enable = "False"
b:Ge/CheckForOverlaps = "True"

s:Ge/World/Type = "TsBox"
s:Ge/World/Material = "G4_Galactic"
d:Ge/World/HLX = 100 mm
d:Ge/World/HLY = 100 mm
d:Ge/World/HLZ = 100 mm

s:Ge/CopperTarget/Type = "TsBox"
s:Ge/CopperTarget/Parent = "World"
s:Ge/CopperTarget/Material = "Copper"
d:Ge/CopperTarget/HLX = 50 mm
d:Ge/CopperTarget/HLY = 50 mm
d:Ge/CopperTarget/HLZ = 0.5 mm
d:Ge/CopperTarget/MaxStepSize = 0.05 mm

s:Ge/EntranceFilm/Type = "TsBox"
s:Ge/EntranceFilm/Parent = "World"
s:Ge/EntranceFilm/Material = "G4_Galactic"
d:Ge/EntranceFilm/HLX = 50 mm
d:Ge/EntranceFilm/HLY = 50 mm
d:Ge/EntranceFilm/HLZ = 0.005 mm
d:Ge/EntranceFilm/TransZ = -0.515 mm

s:Ge/ExitFilm/Type = "TsBox"
s:Ge/ExitFilm/Parent = "World"
s:Ge/ExitFilm/Material = "G4_Galactic"
d:Ge/ExitFilm/HLX = 50 mm
d:Ge/ExitFilm/HLY = 50 mm
d:Ge/ExitFilm/HLZ = 0.005 mm
d:Ge/ExitFilm/TransZ = 0.515 mm

s:Ge/BeamPosition/Type = "Group"
s:Ge/BeamPosition/Parent = "World"
d:Ge/BeamPosition/TransZ = -10.5 mm
d:Ge/BeamPosition/RotY = 180 deg

s:So/IonBeam/Type = "Beam"
s:So/IonBeam/Component = "BeamPosition"
s:So/IonBeam/BeamParticle = "GenericIon(2,4,2)"
d:So/IonBeam/BeamEnergy = 1200 MeV
u:So/IonBeam/BeamEnergySpread = 0
s:So/IonBeam/BeamPositionDistribution = "None"
s:So/IonBeam/BeamAngularDistribution = "None"
i:So/IonBeam/NumberOfHistoriesInRun = 10000

sv:Ph/Default/Modules = 6 "g4em-standard_opt4" "g4h-phy_QGSP_BERT_HP" "g4decay" "g4ion-binarycascade" "g4h-elastic_HP" "g4stopping"
d:Ph/Default/CutForAllParticles = 0.05 mm
d:Ph/Default/EMRangeMax = 6000 MeV

s:Sc/IonReactions/Quantity = "CarbonReactionNtuple"
s:Sc/IonReactions/Component = "CopperTarget"
s:Sc/IonReactions/OutputFile = "output/secondary_ion_copper_he4_e300_t1_10000_emmax6000_reactions"
s:Sc/IonReactions/OutputType = "ASCII"
s:Sc/IonReactions/IfOutputFileAlreadyExists = "Overwrite"

s:Sc/EntrancePhaseSpace/Quantity = "PhaseSpace"
s:Sc/EntrancePhaseSpace/Surface = "EntranceFilm/ZMinusSurface"
s:Sc/EntrancePhaseSpace/OnlyIncludeParticlesGoing = "In"
s:Sc/EntrancePhaseSpace/OutputType = "ASCII"
s:Sc/EntrancePhaseSpace/OutputFile = "output/secondary_ion_copper_he4_e300_t1_10000_emmax6000_entrance"
s:Sc/EntrancePhaseSpace/IfOutputFileAlreadyExists = "Overwrite"
i:Sc/EntrancePhaseSpace/OutputBufferSize = 100000
b:Sc/EntrancePhaseSpace/IncludeRunID = "True"
b:Sc/EntrancePhaseSpace/IncludeEventID = "True"
b:Sc/EntrancePhaseSpace/IncludeTrackID = "True"
b:Sc/EntrancePhaseSpace/IncludeParentID = "True"

s:Sc/ExitPhaseSpace/Quantity = "PhaseSpace"
s:Sc/ExitPhaseSpace/Surface = "ExitFilm/ZMinusSurface"
s:Sc/ExitPhaseSpace/OnlyIncludeParticlesGoing = "In"
s:Sc/ExitPhaseSpace/OutputType = "ASCII"
s:Sc/ExitPhaseSpace/OutputFile = "output/secondary_ion_copper_he4_e300_t1_10000_emmax6000_exit"
s:Sc/ExitPhaseSpace/IfOutputFileAlreadyExists = "Overwrite"
i:Sc/ExitPhaseSpace/OutputBufferSize = 100000
b:Sc/ExitPhaseSpace/IncludeRunID = "True"
b:Sc/ExitPhaseSpace/IncludeEventID = "True"
b:Sc/ExitPhaseSpace/IncludeTrackID = "True"
b:Sc/ExitPhaseSpace/IncludeParentID = "True"
