includeFile = run_energy_scan.txt
s:Ge/Box/Material = "Water_75eV"
sv:Ph/Default/Modules = 2 "g4em-standard_opt4" "g4decay"
d:Ph/Default/CutForAllParticles = 0.05 mm
d:Ph/Default/EMRangeMax = 6 GeV
b:Ts/PauseBeforeQuit = "False"
b:So/CarbonPBS/DijMode = "False"
s:So/CarbonPBS/WeightMode = "Histories"
s:So/CarbonPBS/SpotCoordinateConvention = "TPS"
s:Sc/DoseAtPhantomP/IfOutputFileAlreadyExists = "Exit"
i:Ts/ShowHistoryCountAtInterval = 1000000
s:So/CarbonPBS/SpotPlanFile = "/mnt/sdb/wuwei/MAIGO_review_fix_20260923/evidence/field3cm_emonly_20260923/inputs/source_audit_spots.csv"
s:So/CarbonPBS/BeamModelFile = "/mnt/sdb/wuwei/MAIGO_review_fix_20260923/evidence/field3cm_emonly_20260923/inputs/source_audit_beam.csv"
u:So/CarbonPBS/HistoriesScale = 1
i:Ts/Seed = 2026100901
i:Ts/NumberOfThreads = 128
s:Ge/World/Material = "Vacuum"
s:Ge/SourceAudit/Type = "TsBox"
s:Ge/SourceAudit/Parent = "World"
s:Ge/SourceAudit/Material = "Vacuum"
d:Ge/SourceAudit/HLX = 100 mm
d:Ge/SourceAudit/HLY = 0.1 mm
d:Ge/SourceAudit/HLZ = 100 mm
d:Ge/SourceAudit/TransY = -449 mm
s:Sc/SourceAudit/Quantity = "PhaseSpace"
s:Sc/SourceAudit/Surface = "SourceAudit/YMinusSurface"
s:Sc/SourceAudit/OnlyIncludeParticlesGoing = "In"
sv:Sc/SourceAudit/OnlyIncludeParticlesNamed = 1 "GenericIon(6,12,*)"
s:Sc/SourceAudit/OutputType = "ASCII"
s:Sc/SourceAudit/OutputFile = "source_audit"
s:Sc/SourceAudit/IfOutputFileAlreadyExists = "Exit"
i:Sc/SourceAudit/OutputBufferSize = 100000
b:Sc/SourceAudit/IncludeRunID = "True"
b:Sc/SourceAudit/IncludeEventID = "True"
b:Sc/SourceAudit/IncludeTrackID = "True"
b:Sc/SourceAudit/IncludeParentID = "True"
b:Sc/SourceAudit/KillAfterPhaseSpace = "True"
