# Dedicated monoenergetic C-12 in G4_WATER, 1M histories.
# __ENERGY_MEVU__ MeV/u. CarbonCascadeNtuple feeds CRPKG + CCAS.
i:Ts/Seed = __SEED__
i:Ts/NumberOfThreads = 56
i:Ts/ShowHistoryCountAtInterval = 100000
b:Ts/ShowHistoryCountLessFrequentlyAsSimulationProgresses = "True"
b:Gr/Enable = "False"

s:Ge/World/Type = "TsBox"
s:Ge/World/Material = "Air"
d:Ge/World/HLX = 200 mm
d:Ge/World/HLY = 200 mm
d:Ge/World/HLZ = 1100 mm

s:Ge/Phantom/Parent = "World"
s:Ge/Phantom/Type = "TsBox"
s:Ge/Phantom/Material = "G4_WATER"
d:Ge/Phantom/HLX = 150 mm
d:Ge/Phantom/HLY = 150 mm
d:Ge/Phantom/HLZ = 1000 mm
d:Ge/Phantom/MaxStepSize = 0.1 mm

s:Ge/BeamPosition/Parent = "World"
s:Ge/BeamPosition/Type = "Group"
d:Ge/BeamPosition/TransX = 0 mm
d:Ge/BeamPosition/TransY = 0 mm
d:Ge/BeamPosition/TransZ = -999.999 mm
d:Ge/BeamPosition/RotX = 0 deg
d:Ge/BeamPosition/RotY = 0 deg
d:Ge/BeamPosition/RotZ = 0 deg

s:So/CarbonBeam/Type = "Beam"
s:So/CarbonBeam/Component = "BeamPosition"
s:So/CarbonBeam/BeamParticle = "GenericIon(6,12)"
d:So/CarbonBeam/BeamEnergy = __BEAM_ENERGY_MEV__ MeV
u:So/CarbonBeam/BeamEnergySpread = 0.0
s:So/CarbonBeam/BeamPositionDistribution = "None"
s:So/CarbonBeam/BeamAngularDistribution = "None"
i:So/CarbonBeam/NumberOfHistoriesInRun = 1000000

s:Ph/ListName = "Default"
s:Ph/Default/Type = "Geant4_Modular"
sv:Ph/Default/Modules = 6 "g4em-standard_opt4" "g4h-phy_QGSP_BIC_HP" "g4decay" "g4ion-inclxx" "g4h-elastic_HP" "g4stopping"
d:Ph/Default/CutForAllParticles = 0.05 mm

s:Sc/CascadeReactions/Quantity = "CarbonCascadeNtuple"
s:Sc/CascadeReactions/Component = "Phantom"
s:Sc/CascadeReactions/OutputFile = "__STEM__"
s:Sc/CascadeReactions/OutputType = "ASCII"
s:Sc/CascadeReactions/IfOutputFileAlreadyExists = "Overwrite"
