# Generic ion hadronic-elastic package extraction.
# Extraction mode: @EXTRACTION_MODE@
# Sampling purpose: @SAMPLING_PURPOSE@
# Continuous EM loss enabled: @CONTINUOUS_EM_LOSS_ENABLED@
# CarbonElasticNtuple is the only scorer; its
# implementation accepts only fHadronic elastic PostStep processes and therefore
# excludes Coulomb scattering and multiple scattering.
i:Ts/Seed = @SEED@
i:Ts/NumberOfThreads = @THREADS@
i:Ts/ShowHistoryCountAtInterval = 10000
b:Gr/Enable = "False"

s:Ge/World/Type = "TsBox"
s:Ge/World/Material = "Air"
d:Ge/World/HLX = 200 mm
d:Ge/World/HLY = 200 mm
d:Ge/World/HLZ = 400 mm
s:Ge/Phantom/Parent = "World"
s:Ge/Phantom/Type = "TsBox"
s:Ge/Phantom/Material = "@MATERIAL@"
d:Ge/Phantom/HLX = 150 mm
d:Ge/Phantom/HLY = 150 mm
d:Ge/Phantom/HLZ = 350 mm
d:Ge/Phantom/MaxStepSize = 0.1 mm

s:Ge/BeamPosition/Parent = "World"
s:Ge/BeamPosition/Type = "Group"
d:Ge/BeamPosition/TransZ = 349.999 mm
s:So/IonBeam/Type = "Beam"
s:So/IonBeam/Component = "BeamPosition"
s:So/IonBeam/BeamParticle = "@PROJECTILE_NAME@"
d:So/IonBeam/BeamEnergy = @TOTAL_ENERGY_MEV@ MeV
u:So/IonBeam/BeamEnergySpread = 0.0
s:So/IonBeam/BeamPositionDistribution = "None"
s:So/IonBeam/BeamAngularDistribution = "None"
i:So/IonBeam/NumberOfHistoriesInRun = @HISTORIES@

s:Ph/ListName = "Default"
s:Ph/Default/Type = "Geant4_Modular"
sv:Ph/Default/Modules = @PHYSICS_MODULE_COUNT@ @PHYSICS_MODULES@
d:Ph/Default/CutForAllParticles = 0.05 mm

s:Sc/ElasticEvents/Quantity = "CarbonElasticNtuple"
s:Sc/ElasticEvents/Component = "Phantom"
s:Sc/ElasticEvents/OutputFile = "@OUTPUT_STEM@_elastic"
s:Sc/ElasticEvents/OutputType = "ASCII"
s:Sc/ElasticEvents/IfOutputFileAlreadyExists = "Overwrite"
i:Sc/ElasticEvents/ProjectileZ = @PROJECTILE_Z@
i:Sc/ElasticEvents/ProjectileA = @PROJECTILE_A@
