# Diagnostic only: direct G4HadronicProcessStore elastic XS query, no dose.
# The scorer emits the authoritative uniform runtime grid, including zero.
# EnergyMin/Max/Step are in total kinetic-energy units and are converted to
# MeV/u by the proton A=1 scorer input below.
i:Ts/Seed = 2026082099
i:Ts/NumberOfThreads = 1
b:Gr/Enable = "False"
s:Ge/World/Type = "TsBox"
s:Ge/World/Material = "Air"
d:Ge/World/HLX = 200 mm
d:Ge/World/HLY = 200 mm
d:Ge/World/HLZ = 400 mm
s:Ge/Phantom/Parent = "World"
s:Ge/Phantom/Type = "TsBox"
s:Ge/Phantom/Material = "G4_WATER"
d:Ge/Phantom/HLX = 150 mm
d:Ge/Phantom/HLY = 150 mm
d:Ge/Phantom/HLZ = 350 mm
s:Ge/BeamPosition/Parent = "World"
s:Ge/BeamPosition/Type = "Group"
d:Ge/BeamPosition/TransZ = 349.999 mm
s:So/Beam/Type = "Beam"
s:So/Beam/Component = "BeamPosition"
s:So/Beam/BeamParticle = "proton"
d:So/Beam/BeamEnergy = 2 MeV
u:So/Beam/BeamEnergySpread = 0.0
s:So/Beam/BeamPositionDistribution = "None"
s:So/Beam/BeamAngularDistribution = "None"
i:So/Beam/NumberOfHistoriesInRun = 1
s:Ph/ListName = "Default"
s:Ph/Default/Type = "Geant4_Modular"
sv:Ph/Default/Modules = 5 "g4em-standard_opt4" "g4h-phy_QGSP_BIC_HP" "g4decay" "g4h-elastic_HP" "g4stopping"
s:Sc/ElasticXS/Quantity = "ElasticCrossSectionQueryNtuple"
s:Sc/ElasticXS/Component = "Phantom"
s:Sc/ElasticXS/OutputFile = "proton_water_elastic_xs_query"
s:Sc/ElasticXS/OutputType = "ASCII"
s:Sc/ElasticXS/IfOutputFileAlreadyExists = "Overwrite"
d:Sc/ElasticXS/EnergyMin = 0 MeV
d:Sc/ElasticXS/EnergyMax = 251 MeV
d:Sc/ElasticXS/EnergyStep = 0.01 MeV
