# Patient CT (TsDicomPatient) + Schneider HU→material, 150 MeV/u C-12.
#
# TOPAS places TsDicomPatient so the CT isocenter is at the component origin
# (Iso Center = Trans). With Trans=0 the volume is centered on the world origin:
#   half-depth = 0.5 * 35 * 2 mm = 35 mm → first slice at z=-35 mm.
# GPU maps first slice to z=0; compare curves share entrance-relative depth.
i:Ts/Seed = 20260715
i:Ts/NumberOfThreads = 0
b:Ts/ShowHistoryCountLessFrequentlyAsSimulationProgresses = "True"
b:Gr/Enable = "False"
b:Ge/CheckForOverlaps = "True"
b:Ge/QuitIfOverlapDetected = "True"

s:Ge/World/Type = "TsBox"
s:Ge/World/Material = "G4_AIR"
d:Ge/World/HLX = 30. cm
d:Ge/World/HLY = 30. cm
d:Ge/World/HLZ = 30. cm

s:Ge/Patient/Parent = "World"
s:Ge/Patient/Type = "TsDicomPatient"
s:Ge/Patient/DicomDirectory = "ct_dicom"
s:Ge/Patient/ImagingtoMaterialConverter = "Schneider"
includeFile = HUtoMaterialSchneider.txt
d:Ge/Patient/TransX = 0. mm
d:Ge/Patient/TransY = 0. mm
d:Ge/Patient/TransZ = 0. mm
d:Ge/Patient/RotX = 0. deg
d:Ge/Patient/RotY = 0. deg
d:Ge/Patient/RotZ = 0. deg
b:Ge/Patient/PreLoadAllMaterials = "True"
i:Gr/ShowOnlyOutlineIfVoxelCountExceeds = 1

# Exit water after last CT slice (z=+35 mm → +85 mm).
s:Ge/WaterExit/Parent = "World"
s:Ge/WaterExit/Type = "TsBox"
s:Ge/WaterExit/Material = "Water_75eV"
d:Ge/WaterExit/HLX = 15. cm
d:Ge/WaterExit/HLY = 15. cm
d:Ge/WaterExit/HLZ = 25. mm
d:Ge/WaterExit/TransX = 0. mm
d:Ge/WaterExit/TransY = 0. mm
d:Ge/WaterExit/TransZ = 60. mm
d:Ge/WaterExit/MaxStepSize = 0.5 mm

# Parallel IDD tube: entrance at first slice (z=-35) through exit water (z=+85).
s:Ge/IddTube/Parent = "World"
s:Ge/IddTube/Type = "TsBox"
b:Ge/IddTube/IsParallel = "True"
d:Ge/IddTube/HLX = 25. mm
d:Ge/IddTube/HLY = 25. mm
d:Ge/IddTube/HLZ = 60. mm
d:Ge/IddTube/TransX = 0. mm
d:Ge/IddTube/TransY = 0. mm
d:Ge/IddTube/TransZ = 25. mm

# Beam along +z through FOV center, just before first slice.
s:Ge/BeamPosition/Parent = "World"
s:Ge/BeamPosition/Type = "Group"
d:Ge/BeamPosition/TransX = 0. mm
d:Ge/BeamPosition/TransY = 0. mm
d:Ge/BeamPosition/TransZ = -35.1 mm
d:Ge/BeamPosition/RotX = 0. deg
d:Ge/BeamPosition/RotY = 0. deg
d:Ge/BeamPosition/RotZ = 0. deg

s:So/CarbonBeam/Type = "Beam"
s:So/CarbonBeam/Component = "BeamPosition"
s:So/CarbonBeam/BeamParticle = "GenericIon(6,12)"
d:So/CarbonBeam/BeamEnergy = 1800. MeV
u:So/CarbonBeam/BeamEnergySpread = 0.0
s:So/CarbonBeam/BeamPositionDistribution = "None"
s:So/CarbonBeam/BeamAngularDistribution = "None"
i:So/CarbonBeam/NumberOfHistoriesInRun = 20000

s:Ph/ListName = "Default"
s:Ph/Default/Type = "Geant4_Modular"
sv:Ph/Default/Modules = 6 "g4em-standard_opt4" "g4h-phy_QGSP_BIC_HP" "g4decay" "g4ion-binarycascade" "g4h-elastic_HP" "g4stopping"
d:Ph/Default/CutForAllParticles = 0.05 mm

s:Sc/IddEnergy/Quantity = "EnergyDeposit"
s:Sc/IddEnergy/Component = "IddTube"
s:Sc/IddEnergy/OutputFile = "output/ct_patient_energy_deposit"
s:Sc/IddEnergy/OutputType = "csv"
s:Sc/IddEnergy/IfOutputFileAlreadyExists = "Overwrite"
i:Sc/IddEnergy/XBins = 1
i:Sc/IddEnergy/YBins = 1
i:Sc/IddEnergy/ZBins = 240
sv:Sc/IddEnergy/Report = 1 "Sum"
