# C-12 pristine Bragg curve reference case for TOPAS 3.7-style syntax.
# BeamEnergy is TOTAL C-12 kinetic energy: 200 MeV/u * 12 = 2400 MeV.

i:Ts/Seed = 20260714
i:Ts/NumberOfThreads = 0
b:Ts/ShowHistoryCountLessFrequentlyAsSimulationProgresses = "True"
b:Gr/Enable = "False"

# Geometry: 300 x 300 x 400 mm3 water phantom, beam along +z.
s:Ge/World/Type = "TsBox"
s:Ge/World/Material = "Air"
d:Ge/World/HLX = 20. cm
d:Ge/World/HLY = 20. cm
d:Ge/World/HLZ = 25. cm

s:Ge/Phantom/Parent = "World"
s:Ge/Phantom/Type = "TsBox"
s:Ge/Phantom/Material = "Water_75eV"
d:Ge/Phantom/HLX = 15. cm
d:Ge/Phantom/HLY = 15. cm
d:Ge/Phantom/HLZ = 20. cm
d:Ge/Phantom/MaxStepSize = 0.1 mm

s:Ge/BeamPosition/Parent = "World"
s:Ge/BeamPosition/Type = "Group"
d:Ge/BeamPosition/TransX = 0. mm
d:Ge/BeamPosition/TransY = 0. mm
d:Ge/BeamPosition/TransZ = -200.1 mm
d:Ge/BeamPosition/RotX = 0. deg
d:Ge/BeamPosition/RotY = 0. deg
d:Ge/BeamPosition/RotZ = 0. deg

# Monoenergetic, zero-emittance pencil beam.
s:So/CarbonBeam/Type = "Beam"
s:So/CarbonBeam/Component = "BeamPosition"
s:So/CarbonBeam/BeamParticle = "GenericIon(6,12)"
d:So/CarbonBeam/BeamEnergy = 2400. MeV
u:So/CarbonBeam/BeamEnergySpread = 0.0
s:So/CarbonBeam/BeamPositionDistribution = "None"
s:So/CarbonBeam/BeamAngularDistribution = "None"
i:So/CarbonBeam/NumberOfHistoriesInRun = 1000000

# Explicitly record the otherwise-default ion-capable modular physics list.
s:Ph/ListName = "Default"
s:Ph/Default/Type = "Geant4_Modular"
sv:Ph/Default/Modules = 6 "g4em-standard_opt4" "g4h-phy_QGSP_BIC_HP" "g4decay" "g4ion-binarycascade" "g4h-elastic_HP" "g4stopping"
d:Ph/Default/CutForAllParticles = 0.05 mm

# 0.5 mm depth bins, integrated over the full phantom cross section.
s:Sc/DepthEnergy/Quantity = "EnergyDeposit"
s:Sc/DepthEnergy/Component = "Phantom"
s:Sc/DepthEnergy/OutputFile = "output/topas_energy_deposit"
s:Sc/DepthEnergy/OutputType = "csv"
s:Sc/DepthEnergy/IfOutputFileAlreadyExists = "Overwrite"
i:Sc/DepthEnergy/XBins = 1
i:Sc/DepthEnergy/YBins = 1
i:Sc/DepthEnergy/ZBins = 800
sv:Sc/DepthEnergy/Report = 2 "Sum" "Standard_Deviation"

s:Sc/DepthDose/Quantity = "DoseToMedium"
s:Sc/DepthDose/Component = "Phantom"
s:Sc/DepthDose/OutputFile = "output/topas_dose"
s:Sc/DepthDose/OutputType = "csv"
s:Sc/DepthDose/IfOutputFileAlreadyExists = "Overwrite"
i:Sc/DepthDose/XBins = 1
i:Sc/DepthDose/YBins = 1
i:Sc/DepthDose/ZBins = 800
sv:Sc/DepthDose/Report = 2 "Sum" "Standard_Deviation"

# Primary-only energy deposition for later attenuation diagnostics.
s:Sc/PrimaryC12Energy/Quantity = "EnergyDeposit"
s:Sc/PrimaryC12Energy/Component = "Phantom"
s:Sc/PrimaryC12Energy/OutputFile = "output/topas_primary_c12_energy_deposit"
s:Sc/PrimaryC12Energy/OutputType = "csv"
s:Sc/PrimaryC12Energy/IfOutputFileAlreadyExists = "Overwrite"
i:Sc/PrimaryC12Energy/XBins = 1
i:Sc/PrimaryC12Energy/YBins = 1
i:Sc/PrimaryC12Energy/ZBins = 800
sv:Sc/PrimaryC12Energy/OnlyIncludeParticlesNamed = 1 "GenericIon(6,12)"

