includeFile = carbon_200MeVu_water.txt

# Ancestor-attributed 3D dose. Electrons/positrons inherit the
# charged-particle category of their parent. Neutron/gamma lineages retain the
# first neutral source category for all descendants.
s:Sc/DepthEnergy/OutputFile = "output/ancestor_reference_total_energy_deposit"
s:Sc/DepthDose/OutputFile = "output/ancestor_reference_total_dose"
s:Sc/PrimaryC12Energy/OutputFile = "output/ancestor_reference_legacy_c12_energy_deposit"

# Full-phantom 3D dose grid: 5 x 5 x 0.5 mm3 voxels. Sparse output avoids
# writing the overwhelmingly empty lateral region of this pencil-beam case.
s:Sc/AncestorTotalDose3D/Quantity = "DoseToMedium"
s:Sc/AncestorTotalDose3D/Component = "Phantom"
s:Sc/AncestorTotalDose3D/OutputFile = "output/ancestor_reference_total_dose_3d"
s:Sc/AncestorTotalDose3D/OutputType = "csv"
s:Sc/AncestorTotalDose3D/IfOutputFileAlreadyExists = "Overwrite"
i:Sc/AncestorTotalDose3D/XBins = 60
i:Sc/AncestorTotalDose3D/YBins = 60
i:Sc/AncestorTotalDose3D/ZBins = 800
sv:Sc/AncestorTotalDose3D/Report = 1 "Sum"
b:Sc/AncestorTotalDose3D/Sparsify = "True"
b:Sc/AncestorTotalDose3D/SingleIndex = "False"

s:Sc/AncestorPrimaryC12/Quantity = "CarbonDoseOrigin"
s:Sc/AncestorPrimaryC12/Component = "Phantom"
s:Sc/AncestorPrimaryC12/OutputFile = "output/ancestor_reference_primary_c12_dose_3d"
s:Sc/AncestorPrimaryC12/OutputType = "csv"
s:Sc/AncestorPrimaryC12/IfOutputFileAlreadyExists = "Overwrite"
i:Sc/AncestorPrimaryC12/XBins = 60
i:Sc/AncestorPrimaryC12/YBins = 60
i:Sc/AncestorPrimaryC12/ZBins = 800
sv:Sc/AncestorPrimaryC12/Report = 1 "Sum"
b:Sc/AncestorPrimaryC12/Sparsify = "True"
b:Sc/AncestorPrimaryC12/SingleIndex = "False"
s:Sc/AncestorPrimaryC12/OriginCategory = "primary_c12"

s:Sc/AncestorSecondaryCarbon/Quantity = "CarbonDoseOrigin"
s:Sc/AncestorSecondaryCarbon/Component = "Phantom"
s:Sc/AncestorSecondaryCarbon/OutputFile = "output/ancestor_reference_secondary_carbon_dose_3d"
s:Sc/AncestorSecondaryCarbon/OutputType = "csv"
s:Sc/AncestorSecondaryCarbon/IfOutputFileAlreadyExists = "Overwrite"
i:Sc/AncestorSecondaryCarbon/XBins = 60
i:Sc/AncestorSecondaryCarbon/YBins = 60
i:Sc/AncestorSecondaryCarbon/ZBins = 800
sv:Sc/AncestorSecondaryCarbon/Report = 1 "Sum"
b:Sc/AncestorSecondaryCarbon/Sparsify = "True"
b:Sc/AncestorSecondaryCarbon/SingleIndex = "False"
s:Sc/AncestorSecondaryCarbon/OriginCategory = "secondary_carbon"

s:Sc/AncestorBoron/Quantity = "CarbonDoseOrigin"
s:Sc/AncestorBoron/Component = "Phantom"
s:Sc/AncestorBoron/OutputFile = "output/ancestor_reference_boron_dose_3d"
s:Sc/AncestorBoron/OutputType = "csv"
s:Sc/AncestorBoron/IfOutputFileAlreadyExists = "Overwrite"
i:Sc/AncestorBoron/XBins = 60
i:Sc/AncestorBoron/YBins = 60
i:Sc/AncestorBoron/ZBins = 800
sv:Sc/AncestorBoron/Report = 1 "Sum"
b:Sc/AncestorBoron/Sparsify = "True"
b:Sc/AncestorBoron/SingleIndex = "False"
s:Sc/AncestorBoron/OriginCategory = "boron"

s:Sc/AncestorBeryllium/Quantity = "CarbonDoseOrigin"
s:Sc/AncestorBeryllium/Component = "Phantom"
s:Sc/AncestorBeryllium/OutputFile = "output/ancestor_reference_beryllium_dose_3d"
s:Sc/AncestorBeryllium/OutputType = "csv"
s:Sc/AncestorBeryllium/IfOutputFileAlreadyExists = "Overwrite"
i:Sc/AncestorBeryllium/XBins = 60
i:Sc/AncestorBeryllium/YBins = 60
i:Sc/AncestorBeryllium/ZBins = 800
sv:Sc/AncestorBeryllium/Report = 1 "Sum"
b:Sc/AncestorBeryllium/Sparsify = "True"
b:Sc/AncestorBeryllium/SingleIndex = "False"
s:Sc/AncestorBeryllium/OriginCategory = "beryllium"

s:Sc/AncestorLithium/Quantity = "CarbonDoseOrigin"
s:Sc/AncestorLithium/Component = "Phantom"
s:Sc/AncestorLithium/OutputFile = "output/ancestor_reference_lithium_dose_3d"
s:Sc/AncestorLithium/OutputType = "csv"
s:Sc/AncestorLithium/IfOutputFileAlreadyExists = "Overwrite"
i:Sc/AncestorLithium/XBins = 60
i:Sc/AncestorLithium/YBins = 60
i:Sc/AncestorLithium/ZBins = 800
sv:Sc/AncestorLithium/Report = 1 "Sum"
b:Sc/AncestorLithium/Sparsify = "True"
b:Sc/AncestorLithium/SingleIndex = "False"
s:Sc/AncestorLithium/OriginCategory = "lithium"

s:Sc/AncestorHelium/Quantity = "CarbonDoseOrigin"
s:Sc/AncestorHelium/Component = "Phantom"
s:Sc/AncestorHelium/OutputFile = "output/ancestor_reference_helium_dose_3d"
s:Sc/AncestorHelium/OutputType = "csv"
s:Sc/AncestorHelium/IfOutputFileAlreadyExists = "Overwrite"
i:Sc/AncestorHelium/XBins = 60
i:Sc/AncestorHelium/YBins = 60
i:Sc/AncestorHelium/ZBins = 800
sv:Sc/AncestorHelium/Report = 1 "Sum"
b:Sc/AncestorHelium/Sparsify = "True"
b:Sc/AncestorHelium/SingleIndex = "False"
s:Sc/AncestorHelium/OriginCategory = "helium"

s:Sc/AncestorProton/Quantity = "CarbonDoseOrigin"
s:Sc/AncestorProton/Component = "Phantom"
s:Sc/AncestorProton/OutputFile = "output/ancestor_reference_proton_dose_3d"
s:Sc/AncestorProton/OutputType = "csv"
s:Sc/AncestorProton/IfOutputFileAlreadyExists = "Overwrite"
i:Sc/AncestorProton/XBins = 60
i:Sc/AncestorProton/YBins = 60
i:Sc/AncestorProton/ZBins = 800
sv:Sc/AncestorProton/Report = 1 "Sum"
b:Sc/AncestorProton/Sparsify = "True"
b:Sc/AncestorProton/SingleIndex = "False"
s:Sc/AncestorProton/OriginCategory = "proton"

s:Sc/AncestorOtherCharged/Quantity = "CarbonDoseOrigin"
s:Sc/AncestorOtherCharged/Component = "Phantom"
s:Sc/AncestorOtherCharged/OutputFile = "output/ancestor_reference_other_charged_dose_3d"
s:Sc/AncestorOtherCharged/OutputType = "csv"
s:Sc/AncestorOtherCharged/IfOutputFileAlreadyExists = "Overwrite"
i:Sc/AncestorOtherCharged/XBins = 60
i:Sc/AncestorOtherCharged/YBins = 60
i:Sc/AncestorOtherCharged/ZBins = 800
sv:Sc/AncestorOtherCharged/Report = 1 "Sum"
b:Sc/AncestorOtherCharged/Sparsify = "True"
b:Sc/AncestorOtherCharged/SingleIndex = "False"
s:Sc/AncestorOtherCharged/OriginCategory = "other_charged"

s:Sc/AncestorNeutron/Quantity = "CarbonDoseOrigin"
s:Sc/AncestorNeutron/Component = "Phantom"
s:Sc/AncestorNeutron/OutputFile = "output/ancestor_reference_neutron_dose_3d"
s:Sc/AncestorNeutron/OutputType = "csv"
s:Sc/AncestorNeutron/IfOutputFileAlreadyExists = "Overwrite"
i:Sc/AncestorNeutron/XBins = 60
i:Sc/AncestorNeutron/YBins = 60
i:Sc/AncestorNeutron/ZBins = 800
sv:Sc/AncestorNeutron/Report = 1 "Sum"
b:Sc/AncestorNeutron/Sparsify = "True"
b:Sc/AncestorNeutron/SingleIndex = "False"
s:Sc/AncestorNeutron/OriginCategory = "neutron"

s:Sc/AncestorGamma/Quantity = "CarbonDoseOrigin"
s:Sc/AncestorGamma/Component = "Phantom"
s:Sc/AncestorGamma/OutputFile = "output/ancestor_reference_gamma_dose_3d"
s:Sc/AncestorGamma/OutputType = "csv"
s:Sc/AncestorGamma/IfOutputFileAlreadyExists = "Overwrite"
i:Sc/AncestorGamma/XBins = 60
i:Sc/AncestorGamma/YBins = 60
i:Sc/AncestorGamma/ZBins = 800
sv:Sc/AncestorGamma/Report = 1 "Sum"
b:Sc/AncestorGamma/Sparsify = "True"
b:Sc/AncestorGamma/SingleIndex = "False"
s:Sc/AncestorGamma/OriginCategory = "gamma"

s:Sc/AncestorNeutralOther/Quantity = "CarbonDoseOrigin"
s:Sc/AncestorNeutralOther/Component = "Phantom"
s:Sc/AncestorNeutralOther/OutputFile = "output/ancestor_reference_neutral_other_dose_3d"
s:Sc/AncestorNeutralOther/OutputType = "csv"
s:Sc/AncestorNeutralOther/IfOutputFileAlreadyExists = "Overwrite"
i:Sc/AncestorNeutralOther/XBins = 60
i:Sc/AncestorNeutralOther/YBins = 60
i:Sc/AncestorNeutralOther/ZBins = 800
sv:Sc/AncestorNeutralOther/Report = 1 "Sum"
b:Sc/AncestorNeutralOther/Sparsify = "True"
b:Sc/AncestorNeutralOther/SingleIndex = "False"
s:Sc/AncestorNeutralOther/OriginCategory = "neutral_other"

s:Sc/AncestorUnresolved/Quantity = "CarbonDoseOrigin"
s:Sc/AncestorUnresolved/Component = "Phantom"
s:Sc/AncestorUnresolved/OutputFile = "output/ancestor_reference_unresolved_dose_3d"
s:Sc/AncestorUnresolved/OutputType = "csv"
s:Sc/AncestorUnresolved/IfOutputFileAlreadyExists = "Overwrite"
i:Sc/AncestorUnresolved/XBins = 60
i:Sc/AncestorUnresolved/YBins = 60
i:Sc/AncestorUnresolved/ZBins = 800
sv:Sc/AncestorUnresolved/Report = 1 "Sum"
b:Sc/AncestorUnresolved/Sparsify = "True"
b:Sc/AncestorUnresolved/SingleIndex = "False"
s:Sc/AncestorUnresolved/OriginCategory = "unresolved"
