includeFile = carbon_200MeVu_water_ancestor_attribution.txt

# Fast extension, ancestry, binning, and closure check.
i:So/CarbonBeam/NumberOfHistoriesInRun = 100
s:Sc/DepthEnergy/OutputFile = "output/ancestor_smoke_total_energy_deposit"
s:Sc/DepthDose/OutputFile = "output/ancestor_smoke_total_dose"
s:Sc/PrimaryC12Energy/OutputFile = "output/ancestor_smoke_legacy_c12_energy_deposit"
s:Sc/AncestorTotalDose3D/OutputFile = "output/ancestor_smoke_total_dose_3d"
s:Sc/AncestorPrimaryC12/OutputFile = "output/ancestor_smoke_primary_c12_dose_3d"
s:Sc/AncestorSecondaryCarbon/OutputFile = "output/ancestor_smoke_secondary_carbon_dose_3d"
s:Sc/AncestorBoron/OutputFile = "output/ancestor_smoke_boron_dose_3d"
s:Sc/AncestorBeryllium/OutputFile = "output/ancestor_smoke_beryllium_dose_3d"
s:Sc/AncestorLithium/OutputFile = "output/ancestor_smoke_lithium_dose_3d"
s:Sc/AncestorHelium/OutputFile = "output/ancestor_smoke_helium_dose_3d"
s:Sc/AncestorProton/OutputFile = "output/ancestor_smoke_proton_dose_3d"
s:Sc/AncestorOtherCharged/OutputFile = "output/ancestor_smoke_other_charged_dose_3d"
s:Sc/AncestorNeutron/OutputFile = "output/ancestor_smoke_neutron_dose_3d"
s:Sc/AncestorGamma/OutputFile = "output/ancestor_smoke_gamma_dose_3d"
s:Sc/AncestorNeutralOther/OutputFile = "output/ancestor_smoke_neutral_other_dose_3d"
s:Sc/AncestorUnresolved/OutputFile = "output/ancestor_smoke_unresolved_dose_3d"
