includeFile = carbon_200MeVu_water.txt

# Capture every charged-ion inelastic interaction or decay and its direct
# products. Existing IDD scorers are disabled so this run only creates the
# event-level cascade reference.
b:Sc/DepthEnergy/Active = "False"
b:Sc/DepthDose/Active = "False"
b:Sc/PrimaryC12Energy/Active = "False"

s:Sc/CascadeReactions/Quantity = "CarbonCascadeNtuple"
s:Sc/CascadeReactions/Component = "Phantom"
s:Sc/CascadeReactions/OutputFile = "output/cascade_reference_reactions"
s:Sc/CascadeReactions/OutputType = "ASCII"
s:Sc/CascadeReactions/IfOutputFileAlreadyExists = "Overwrite"
