includeFile = carbon_200MeVu_water.txt

# A single primary initializes the configured TOPAS/Geant4 physics list. The
# custom scorer then queries C-12 inelastic cross sections on a fixed grid.
i:Ts/NumberOfThreads = 1
i:So/CarbonBeam/NumberOfHistoriesInRun = 1
b:Sc/DepthEnergy/Active = "False"
b:Sc/DepthDose/Active = "False"
b:Sc/PrimaryC12Energy/Active = "False"

s:Sc/CarbonCrossSections/Quantity = "CarbonCrossSectionNtuple"
s:Sc/CarbonCrossSections/Component = "Phantom"
s:Sc/CarbonCrossSections/OutputFile = "output/carbon_c12_h_o_inelastic_cross_sections"
s:Sc/CarbonCrossSections/OutputType = "ASCII"
s:Sc/CarbonCrossSections/IfOutputFileAlreadyExists = "Overwrite"
