includeFile = carbon_200MeVu_water.txt

# Directly measure the denominator correction used by myHadronLET:
# sum of kinetic energies of electrons born on charged-hadron steps.
i:Ts/NumberOfThreads = 40
i:Ts/ShowHistoryCountAtInterval = 0
i:So/CarbonBeam/NumberOfHistoriesInRun = 100000
s:Sc/DepthDose/OutputFile = "output/delta_reference_dose"
s:Sc/DepthEnergy/OutputFile = "output/delta_reference_total_energy_deposit"
s:Sc/PrimaryC12Energy/OutputFile = "output/delta_reference_primary_c12_energy_deposit"
s:Sc/PrimaryC12Energy/OnlyIncludeParticlesOfGeneration = "Primary"

s:Sc/PrimaryC12DeltaElectron/Quantity = "CarbonDeltaElectronEnergy"
s:Sc/PrimaryC12DeltaElectron/Component = "Phantom"
s:Sc/PrimaryC12DeltaElectron/OutputFile = "output/delta_reference_primary_c12_electron"
s:Sc/PrimaryC12DeltaElectron/OutputType = "csv"
s:Sc/PrimaryC12DeltaElectron/IfOutputFileAlreadyExists = "Overwrite"
i:Sc/PrimaryC12DeltaElectron/XBins = 1
i:Sc/PrimaryC12DeltaElectron/YBins = 1
i:Sc/PrimaryC12DeltaElectron/ZBins = 800
i:Sc/PrimaryC12DeltaElectron/OnlyIncludeParticlesOfAtomicNumber = 6
i:Sc/PrimaryC12DeltaElectron/OnlyIncludeParticlesOfAtomicMass = 12
s:Sc/PrimaryC12DeltaElectron/OnlyIncludeParticlesOfGeneration = "Primary"

s:Sc/AllHadronDeltaElectron/Quantity = "CarbonDeltaElectronEnergy"
s:Sc/AllHadronDeltaElectron/Component = "Phantom"
s:Sc/AllHadronDeltaElectron/OutputFile = "output/delta_reference_all_hadron_electron"
s:Sc/AllHadronDeltaElectron/OutputType = "csv"
s:Sc/AllHadronDeltaElectron/IfOutputFileAlreadyExists = "Overwrite"
i:Sc/AllHadronDeltaElectron/XBins = 1
i:Sc/AllHadronDeltaElectron/YBins = 1
i:Sc/AllHadronDeltaElectron/ZBins = 800
