# Offset bone strip + mild BiGaussian source (matches GPU emittance).
i:Ts/Seed = 20260714
i:Ts/NumberOfThreads = 0
b:Ts/ShowHistoryCountLessFrequentlyAsSimulationProgresses = "True"
b:Gr/Enable = "False"

s:Ge/World/Type = "TsBox"
s:Ge/World/Material = "Air"
d:Ge/World/HLX = 20. cm
d:Ge/World/HLY = 20. cm
d:Ge/World/HLZ = 25. cm

s:Ge/Phantom/Parent = "World"
s:Ge/Phantom/Type = "TsBox"
s:Ge/Phantom/Material = "Water_75eV"
d:Ge/Phantom/HLX = 15. cm
d:Ge/Phantom/HLY = 15. cm
d:Ge/Phantom/HLZ = 20. cm
d:Ge/Phantom/MaxStepSize = 0.1 mm

# Bone strip x=5..25 mm → center x=+15 mm, HLX=10 mm; z depth 40–80 → center -140? 
# depth 40–80: center depth 60 → global z = -200+60 = -140, HLZ=20 mm
s:Ge/BoneStrip/Parent = "Phantom"
s:Ge/BoneStrip/Type = "TsBox"
s:Ge/BoneStrip/Material = "G4_BONE_COMPACT_ICRU"
d:Ge/BoneStrip/HLX = 10. mm
d:Ge/BoneStrip/HLY = 15. mm
d:Ge/BoneStrip/HLZ = 20. mm
d:Ge/BoneStrip/TransX = 15. mm
d:Ge/BoneStrip/TransZ = -140. mm
d:Ge/BoneStrip/MaxStepSize = 0.1 mm

s:Ge/BeamPosition/Parent = "World"
s:Ge/BeamPosition/Type = "Group"
d:Ge/BeamPosition/TransX = 0. mm
d:Ge/BeamPosition/TransY = 0. mm
d:Ge/BeamPosition/TransZ = -200.1 mm
d:Ge/BeamPosition/RotX = 0. deg
d:Ge/BeamPosition/RotY = 0. deg
d:Ge/BeamPosition/RotZ = 0. deg

s:So/CarbonBeam/Type = "Beam"
s:So/CarbonBeam/Component = "BeamPosition"
s:So/CarbonBeam/BeamParticle = "GenericIon(6,12)"
d:So/CarbonBeam/BeamEnergy = 2400. MeV
u:So/CarbonBeam/BeamEnergySpread = 0.0

s:Sc/HeteroDose3D/Quantity = "DoseToMedium"
s:Sc/HeteroDose3D/Component = "Phantom"
s:Sc/HeteroDose3D/OutputFile = "output/hetero_bone_offset_dose_3d"
s:Sc/HeteroDose3D/OutputType = "csv"
s:Sc/HeteroDose3D/IfOutputFileAlreadyExists = "Overwrite"
i:Sc/HeteroDose3D/XBins = 60
i:Sc/HeteroDose3D/YBins = 60
i:Sc/HeteroDose3D/ZBins = 800
sv:Sc/HeteroDose3D/Report = 1 "Sum"
s:So/CarbonBeam/BeamPositionDistribution = "Gaussian"
s:So/CarbonBeam/BeamPositionCutoffShape = "Ellipse"
d:So/CarbonBeam/BeamPositionSpreadX = 3.0 mm
d:So/CarbonBeam/BeamPositionSpreadY = 3.0 mm
d:So/CarbonBeam/BeamPositionCutoffX = 15.0 mm
d:So/CarbonBeam/BeamPositionCutoffY = 15.0 mm
s:So/CarbonBeam/BeamAngularDistribution = "Gaussian"
d:So/CarbonBeam/BeamAngularSpreadX = 0.01 rad
d:So/CarbonBeam/BeamAngularSpreadY = 0.01 rad
d:So/CarbonBeam/BeamAngularCutoffX = 0.05 rad
d:So/CarbonBeam/BeamAngularCutoffY = 0.05 rad
i:So/CarbonBeam/NumberOfHistoriesInRun = 1000000

s:Ph/ListName = "Default"
s:Ph/Default/Type = "Geant4_Modular"
sv:Ph/Default/Modules = 6 "g4em-standard_opt4" "g4h-phy_QGSP_BIC_HP" "g4decay" "g4ion-binarycascade" "g4h-elastic_HP" "g4stopping"
d:Ph/Default/CutForAllParticles = 0.05 mm

s:Sc/DepthEnergy/Quantity = "EnergyDeposit"
s:Sc/DepthEnergy/Component = "Phantom"
s:Sc/DepthEnergy/OutputFile = "output/hetero_bone_offset_energy_deposit"
s:Sc/DepthEnergy/OutputType = "csv"
s:Sc/DepthEnergy/IfOutputFileAlreadyExists = "Overwrite"
i:Sc/DepthEnergy/XBins = 1
i:Sc/DepthEnergy/YBins = 1
i:Sc/DepthEnergy/ZBins = 800
sv:Sc/DepthEnergy/Report = 2 "Sum" "Standard_Deviation"
