includeFile = carbon_200MeVu_water.txt

# HadronLET water reference. Both scorers use the exact dose-weighted definition
# from Villadslj/Topas-Extension (Order=1). The C-12 scorer is restricted to
# primary tracks; the all-hadron scorer includes every charged Z>=1 particle.
i:Ts/NumberOfThreads = 40
i:Ts/ShowHistoryCountAtInterval = 0
i:So/CarbonBeam/NumberOfHistoriesInRun = 100000

s:Sc/PrimaryC12LETd/Quantity = "myHadronLET"
s:Sc/PrimaryC12LETd/Component = "Phantom"
s:Sc/PrimaryC12LETd/OutputFile = "output/topas_primary_c12_letd"
s:Sc/PrimaryC12LETd/OutputType = "csv"
s:Sc/PrimaryC12LETd/IfOutputFileAlreadyExists = "Overwrite"
s:Sc/PrimaryC12LETd/WeightBy = "dose"
u:Sc/PrimaryC12LETd/Order = 1
i:Sc/PrimaryC12LETd/XBins = 1
i:Sc/PrimaryC12LETd/YBins = 1
i:Sc/PrimaryC12LETd/ZBins = 800
i:Sc/PrimaryC12LETd/OnlyIncludeParticlesOfAtomicNumber = 6
i:Sc/PrimaryC12LETd/OnlyIncludeParticlesOfAtomicMass = 12
s:Sc/PrimaryC12LETd/OnlyIncludeParticlesOfGeneration = "Primary"

s:Sc/AllHadronLETd/Quantity = "myHadronLET"
s:Sc/AllHadronLETd/Component = "Phantom"
s:Sc/AllHadronLETd/OutputFile = "output/topas_all_hadron_letd"
s:Sc/AllHadronLETd/OutputType = "csv"
s:Sc/AllHadronLETd/IfOutputFileAlreadyExists = "Overwrite"
s:Sc/AllHadronLETd/WeightBy = "dose"
u:Sc/AllHadronLETd/Order = 1
i:Sc/AllHadronLETd/XBins = 1
i:Sc/AllHadronLETd/YBins = 1
i:Sc/AllHadronLETd/ZBins = 800
