# Real-material water–bone–water slab (G4_BONE_COMPACT_ICRU insert).
# Geometry identical to density-slab; only the middle-layer material differs.
# depth 0–50 / 50–70 / 70–400 mm; entrance z=-200 mm.

i:Ts/Seed = 20260714
i:Ts/NumberOfThreads = 0
b:Ts/ShowHistoryCountLessFrequentlyAsSimulationProgresses = "True"
b:Gr/Enable = "False"

s:Ge/World/Type = "TsBox"
s:Ge/World/Material = "Air"
d:Ge/World/HLX = 20. cm
d:Ge/World/HLY = 20. cm
d:Ge/World/HLZ = 25. cm

# Layer 1: depth 0–50 mm
s:Ge/Layer1/Parent = "World"
s:Ge/Layer1/Type = "TsBox"
s:Ge/Layer1/Material = "Water_75eV"
d:Ge/Layer1/HLX = 15. cm
d:Ge/Layer1/HLY = 15. cm
d:Ge/Layer1/HLZ = 25. mm
d:Ge/Layer1/TransZ = -175. mm
d:Ge/Layer1/MaxStepSize = 0.1 mm

# Bone insert: depth 50–70 mm (same box as density slab LayerDense)
s:Ge/LayerDense/Parent = "World"
s:Ge/LayerDense/Type = "TsBox"
s:Ge/LayerDense/Material = "G4_BONE_COMPACT_ICRU"
d:Ge/LayerDense/HLX = 15. cm
d:Ge/LayerDense/HLY = 15. cm
d:Ge/LayerDense/HLZ = 10. mm
d:Ge/LayerDense/TransZ = -140. mm
d:Ge/LayerDense/MaxStepSize = 0.1 mm

# Layer 2: depth 70–400 mm
s:Ge/Layer2/Parent = "World"
s:Ge/Layer2/Type = "TsBox"
s:Ge/Layer2/Material = "Water_75eV"
d:Ge/Layer2/HLX = 15. cm
d:Ge/Layer2/HLY = 15. cm
d:Ge/Layer2/HLZ = 165. mm
d:Ge/Layer2/TransZ = 35. mm
d:Ge/Layer2/MaxStepSize = 0.1 mm

s:Ge/BeamPosition/Parent = "World"
s:Ge/BeamPosition/Type = "Group"
d:Ge/BeamPosition/TransX = 0. mm
d:Ge/BeamPosition/TransY = 0. mm
d:Ge/BeamPosition/TransZ = -200.1 mm
d:Ge/BeamPosition/RotX = 0. deg
d:Ge/BeamPosition/RotY = 0. deg
d:Ge/BeamPosition/RotZ = 0. deg

s:So/CarbonBeam/Type = "Beam"
s:So/CarbonBeam/Component = "BeamPosition"
s:So/CarbonBeam/BeamParticle = "GenericIon(6,12)"
d:So/CarbonBeam/BeamEnergy = 2400. MeV
u:So/CarbonBeam/BeamEnergySpread = 0.0
s:So/CarbonBeam/BeamPositionDistribution = "None"
s:So/CarbonBeam/BeamAngularDistribution = "None"
i:So/CarbonBeam/NumberOfHistoriesInRun = 1000000

s:Ph/ListName = "Default"
s:Ph/Default/Type = "Geant4_Modular"
sv:Ph/Default/Modules = 6 "g4em-standard_opt4" "g4h-phy_QGSP_BIC_HP" "g4decay" "g4ion-binarycascade" "g4h-elastic_HP" "g4stopping"
d:Ph/Default/CutForAllParticles = 0.05 mm

s:Sc/Layer1Energy/Quantity = "EnergyDeposit"
s:Sc/Layer1Energy/Component = "Layer1"
s:Sc/Layer1Energy/OutputFile = "output/slab_real_bone_layer1_energy_deposit"
s:Sc/Layer1Energy/OutputType = "csv"
s:Sc/Layer1Energy/IfOutputFileAlreadyExists = "Overwrite"
i:Sc/Layer1Energy/XBins = 1
i:Sc/Layer1Energy/YBins = 1
i:Sc/Layer1Energy/ZBins = 100
sv:Sc/Layer1Energy/Report = 2 "Sum" "Standard_Deviation"

s:Sc/DenseEnergy/Quantity = "EnergyDeposit"
s:Sc/DenseEnergy/Component = "LayerDense"
s:Sc/DenseEnergy/OutputFile = "output/slab_real_bone_bone_energy_deposit"
s:Sc/DenseEnergy/OutputType = "csv"
s:Sc/DenseEnergy/IfOutputFileAlreadyExists = "Overwrite"
i:Sc/DenseEnergy/XBins = 1
i:Sc/DenseEnergy/YBins = 1
i:Sc/DenseEnergy/ZBins = 40
sv:Sc/DenseEnergy/Report = 2 "Sum" "Standard_Deviation"

s:Sc/Layer2Energy/Quantity = "EnergyDeposit"
s:Sc/Layer2Energy/Component = "Layer2"
s:Sc/Layer2Energy/OutputFile = "output/slab_real_bone_layer2_energy_deposit"
s:Sc/Layer2Energy/OutputType = "csv"
s:Sc/Layer2Energy/IfOutputFileAlreadyExists = "Overwrite"
i:Sc/Layer2Energy/XBins = 1
i:Sc/Layer2Energy/YBins = 1
i:Sc/Layer2Energy/ZBins = 660
sv:Sc/Layer2Energy/Report = 2 "Sum" "Standard_Deviation"
