includeFile = carbon_200MeVu_water.txt

# Species-resolved direct energy deposition. The legacy broad categories remain
# mutually exclusive. Additional named-particle scorers decompose the legacy
# "Other" residual and split helium into alpha, He3, and remaining Z=2 ions.
s:Sc/DepthEnergy/OutputFile = "output/species_reference_total_energy_deposit"
s:Sc/DepthDose/OutputFile = "output/species_reference_total_dose"
s:Sc/PrimaryC12Energy/OutputFile = "output/species_reference_legacy_c12_energy_deposit"

s:Sc/SpeciesPrimaryC12Energy/Quantity = "EnergyDeposit"
s:Sc/SpeciesPrimaryC12Energy/Component = "Phantom"
s:Sc/SpeciesPrimaryC12Energy/OutputFile = "output/species_reference_primary_c12_energy_deposit"
s:Sc/SpeciesPrimaryC12Energy/OutputType = "csv"
s:Sc/SpeciesPrimaryC12Energy/IfOutputFileAlreadyExists = "Overwrite"
i:Sc/SpeciesPrimaryC12Energy/XBins = 1
i:Sc/SpeciesPrimaryC12Energy/YBins = 1
i:Sc/SpeciesPrimaryC12Energy/ZBins = 800
sv:Sc/SpeciesPrimaryC12Energy/Report = 2 "Sum" "Standard_Deviation"
i:Sc/SpeciesPrimaryC12Energy/OnlyIncludeParticlesOfAtomicNumber = 6
i:Sc/SpeciesPrimaryC12Energy/OnlyIncludeParticlesOfAtomicMass = 12
s:Sc/SpeciesPrimaryC12Energy/OnlyIncludeParticlesOfGeneration = "Primary"

s:Sc/SpeciesSecondaryCarbonEnergy/Quantity = "EnergyDeposit"
s:Sc/SpeciesSecondaryCarbonEnergy/Component = "Phantom"
s:Sc/SpeciesSecondaryCarbonEnergy/OutputFile = "output/species_reference_secondary_carbon_energy_deposit"
s:Sc/SpeciesSecondaryCarbonEnergy/OutputType = "csv"
s:Sc/SpeciesSecondaryCarbonEnergy/IfOutputFileAlreadyExists = "Overwrite"
i:Sc/SpeciesSecondaryCarbonEnergy/XBins = 1
i:Sc/SpeciesSecondaryCarbonEnergy/YBins = 1
i:Sc/SpeciesSecondaryCarbonEnergy/ZBins = 800
sv:Sc/SpeciesSecondaryCarbonEnergy/Report = 2 "Sum" "Standard_Deviation"
i:Sc/SpeciesSecondaryCarbonEnergy/OnlyIncludeParticlesOfAtomicNumber = 6
s:Sc/SpeciesSecondaryCarbonEnergy/OnlyIncludeParticlesOfGeneration = "Secondary"

s:Sc/SpeciesBoronEnergy/Quantity = "EnergyDeposit"
s:Sc/SpeciesBoronEnergy/Component = "Phantom"
s:Sc/SpeciesBoronEnergy/OutputFile = "output/species_reference_boron_energy_deposit"
s:Sc/SpeciesBoronEnergy/OutputType = "csv"
s:Sc/SpeciesBoronEnergy/IfOutputFileAlreadyExists = "Overwrite"
i:Sc/SpeciesBoronEnergy/XBins = 1
i:Sc/SpeciesBoronEnergy/YBins = 1
i:Sc/SpeciesBoronEnergy/ZBins = 800
sv:Sc/SpeciesBoronEnergy/Report = 2 "Sum" "Standard_Deviation"
i:Sc/SpeciesBoronEnergy/OnlyIncludeParticlesOfAtomicNumber = 5
s:Sc/SpeciesBoronEnergy/OnlyIncludeParticlesOfGeneration = "Secondary"

s:Sc/SpeciesBerylliumEnergy/Quantity = "EnergyDeposit"
s:Sc/SpeciesBerylliumEnergy/Component = "Phantom"
s:Sc/SpeciesBerylliumEnergy/OutputFile = "output/species_reference_beryllium_energy_deposit"
s:Sc/SpeciesBerylliumEnergy/OutputType = "csv"
s:Sc/SpeciesBerylliumEnergy/IfOutputFileAlreadyExists = "Overwrite"
i:Sc/SpeciesBerylliumEnergy/XBins = 1
i:Sc/SpeciesBerylliumEnergy/YBins = 1
i:Sc/SpeciesBerylliumEnergy/ZBins = 800
sv:Sc/SpeciesBerylliumEnergy/Report = 2 "Sum" "Standard_Deviation"
i:Sc/SpeciesBerylliumEnergy/OnlyIncludeParticlesOfAtomicNumber = 4
s:Sc/SpeciesBerylliumEnergy/OnlyIncludeParticlesOfGeneration = "Secondary"

s:Sc/SpeciesLithiumEnergy/Quantity = "EnergyDeposit"
s:Sc/SpeciesLithiumEnergy/Component = "Phantom"
s:Sc/SpeciesLithiumEnergy/OutputFile = "output/species_reference_lithium_energy_deposit"
s:Sc/SpeciesLithiumEnergy/OutputType = "csv"
s:Sc/SpeciesLithiumEnergy/IfOutputFileAlreadyExists = "Overwrite"
i:Sc/SpeciesLithiumEnergy/XBins = 1
i:Sc/SpeciesLithiumEnergy/YBins = 1
i:Sc/SpeciesLithiumEnergy/ZBins = 800
sv:Sc/SpeciesLithiumEnergy/Report = 2 "Sum" "Standard_Deviation"
i:Sc/SpeciesLithiumEnergy/OnlyIncludeParticlesOfAtomicNumber = 3
s:Sc/SpeciesLithiumEnergy/OnlyIncludeParticlesOfGeneration = "Secondary"

s:Sc/SpeciesHeliumEnergy/Quantity = "EnergyDeposit"
s:Sc/SpeciesHeliumEnergy/Component = "Phantom"
s:Sc/SpeciesHeliumEnergy/OutputFile = "output/species_reference_helium_energy_deposit"
s:Sc/SpeciesHeliumEnergy/OutputType = "csv"
s:Sc/SpeciesHeliumEnergy/IfOutputFileAlreadyExists = "Overwrite"
i:Sc/SpeciesHeliumEnergy/XBins = 1
i:Sc/SpeciesHeliumEnergy/YBins = 1
i:Sc/SpeciesHeliumEnergy/ZBins = 800
sv:Sc/SpeciesHeliumEnergy/Report = 2 "Sum" "Standard_Deviation"
i:Sc/SpeciesHeliumEnergy/OnlyIncludeParticlesOfAtomicNumber = 2
s:Sc/SpeciesHeliumEnergy/OnlyIncludeParticlesOfGeneration = "Secondary"

s:Sc/SpeciesProtonEnergy/Quantity = "EnergyDeposit"
s:Sc/SpeciesProtonEnergy/Component = "Phantom"
s:Sc/SpeciesProtonEnergy/OutputFile = "output/species_reference_proton_energy_deposit"
s:Sc/SpeciesProtonEnergy/OutputType = "csv"
s:Sc/SpeciesProtonEnergy/IfOutputFileAlreadyExists = "Overwrite"
i:Sc/SpeciesProtonEnergy/XBins = 1
i:Sc/SpeciesProtonEnergy/YBins = 1
i:Sc/SpeciesProtonEnergy/ZBins = 800
sv:Sc/SpeciesProtonEnergy/Report = 2 "Sum" "Standard_Deviation"
sv:Sc/SpeciesProtonEnergy/OnlyIncludeParticlesNamed = 1 "proton"
s:Sc/SpeciesProtonEnergy/OnlyIncludeParticlesOfGeneration = "Secondary"

s:Sc/SpeciesElectronPositronEnergy/Quantity = "EnergyDeposit"
s:Sc/SpeciesElectronPositronEnergy/Component = "Phantom"
s:Sc/SpeciesElectronPositronEnergy/OutputFile = "output/species_reference_electron_positron_energy_deposit"
s:Sc/SpeciesElectronPositronEnergy/OutputType = "csv"
s:Sc/SpeciesElectronPositronEnergy/IfOutputFileAlreadyExists = "Overwrite"
i:Sc/SpeciesElectronPositronEnergy/XBins = 1
i:Sc/SpeciesElectronPositronEnergy/YBins = 1
i:Sc/SpeciesElectronPositronEnergy/ZBins = 800
sv:Sc/SpeciesElectronPositronEnergy/Report = 2 "Sum" "Standard_Deviation"
sv:Sc/SpeciesElectronPositronEnergy/OnlyIncludeParticlesNamed = 2 "e-" "e+"
s:Sc/SpeciesElectronPositronEnergy/OnlyIncludeParticlesOfGeneration = "Secondary"

s:Sc/SpeciesGammaEnergy/Quantity = "EnergyDeposit"
s:Sc/SpeciesGammaEnergy/Component = "Phantom"
s:Sc/SpeciesGammaEnergy/OutputFile = "output/species_reference_gamma_energy_deposit"
s:Sc/SpeciesGammaEnergy/OutputType = "csv"
s:Sc/SpeciesGammaEnergy/IfOutputFileAlreadyExists = "Overwrite"
i:Sc/SpeciesGammaEnergy/XBins = 1
i:Sc/SpeciesGammaEnergy/YBins = 1
i:Sc/SpeciesGammaEnergy/ZBins = 800
sv:Sc/SpeciesGammaEnergy/Report = 2 "Sum" "Standard_Deviation"
sv:Sc/SpeciesGammaEnergy/OnlyIncludeParticlesNamed = 1 "gamma"
s:Sc/SpeciesGammaEnergy/OnlyIncludeParticlesOfGeneration = "Secondary"

s:Sc/SpeciesNeutronEnergy/Quantity = "EnergyDeposit"
s:Sc/SpeciesNeutronEnergy/Component = "Phantom"
s:Sc/SpeciesNeutronEnergy/OutputFile = "output/species_reference_neutron_energy_deposit"
s:Sc/SpeciesNeutronEnergy/OutputType = "csv"
s:Sc/SpeciesNeutronEnergy/IfOutputFileAlreadyExists = "Overwrite"
i:Sc/SpeciesNeutronEnergy/XBins = 1
i:Sc/SpeciesNeutronEnergy/YBins = 1
i:Sc/SpeciesNeutronEnergy/ZBins = 800
sv:Sc/SpeciesNeutronEnergy/Report = 2 "Sum" "Standard_Deviation"
sv:Sc/SpeciesNeutronEnergy/OnlyIncludeParticlesNamed = 1 "neutron"
s:Sc/SpeciesNeutronEnergy/OnlyIncludeParticlesOfGeneration = "Secondary"

s:Sc/SpeciesDeuteronEnergy/Quantity = "EnergyDeposit"
s:Sc/SpeciesDeuteronEnergy/Component = "Phantom"
s:Sc/SpeciesDeuteronEnergy/OutputFile = "output/species_reference_deuteron_energy_deposit"
s:Sc/SpeciesDeuteronEnergy/OutputType = "csv"
s:Sc/SpeciesDeuteronEnergy/IfOutputFileAlreadyExists = "Overwrite"
i:Sc/SpeciesDeuteronEnergy/XBins = 1
i:Sc/SpeciesDeuteronEnergy/YBins = 1
i:Sc/SpeciesDeuteronEnergy/ZBins = 800
sv:Sc/SpeciesDeuteronEnergy/Report = 2 "Sum" "Standard_Deviation"
sv:Sc/SpeciesDeuteronEnergy/OnlyIncludeParticlesNamed = 1 "deuteron"
s:Sc/SpeciesDeuteronEnergy/OnlyIncludeParticlesOfGeneration = "Secondary"

s:Sc/SpeciesTritonEnergy/Quantity = "EnergyDeposit"
s:Sc/SpeciesTritonEnergy/Component = "Phantom"
s:Sc/SpeciesTritonEnergy/OutputFile = "output/species_reference_triton_energy_deposit"
s:Sc/SpeciesTritonEnergy/OutputType = "csv"
s:Sc/SpeciesTritonEnergy/IfOutputFileAlreadyExists = "Overwrite"
i:Sc/SpeciesTritonEnergy/XBins = 1
i:Sc/SpeciesTritonEnergy/YBins = 1
i:Sc/SpeciesTritonEnergy/ZBins = 800
sv:Sc/SpeciesTritonEnergy/Report = 2 "Sum" "Standard_Deviation"
sv:Sc/SpeciesTritonEnergy/OnlyIncludeParticlesNamed = 1 "triton"
s:Sc/SpeciesTritonEnergy/OnlyIncludeParticlesOfGeneration = "Secondary"

s:Sc/SpeciesAlphaEnergy/Quantity = "EnergyDeposit"
s:Sc/SpeciesAlphaEnergy/Component = "Phantom"
s:Sc/SpeciesAlphaEnergy/OutputFile = "output/species_reference_alpha_energy_deposit"
s:Sc/SpeciesAlphaEnergy/OutputType = "csv"
s:Sc/SpeciesAlphaEnergy/IfOutputFileAlreadyExists = "Overwrite"
i:Sc/SpeciesAlphaEnergy/XBins = 1
i:Sc/SpeciesAlphaEnergy/YBins = 1
i:Sc/SpeciesAlphaEnergy/ZBins = 800
sv:Sc/SpeciesAlphaEnergy/Report = 2 "Sum" "Standard_Deviation"
sv:Sc/SpeciesAlphaEnergy/OnlyIncludeParticlesNamed = 1 "alpha"
s:Sc/SpeciesAlphaEnergy/OnlyIncludeParticlesOfGeneration = "Secondary"

s:Sc/SpeciesHelium3Energy/Quantity = "EnergyDeposit"
s:Sc/SpeciesHelium3Energy/Component = "Phantom"
s:Sc/SpeciesHelium3Energy/OutputFile = "output/species_reference_helium3_energy_deposit"
s:Sc/SpeciesHelium3Energy/OutputType = "csv"
s:Sc/SpeciesHelium3Energy/IfOutputFileAlreadyExists = "Overwrite"
i:Sc/SpeciesHelium3Energy/XBins = 1
i:Sc/SpeciesHelium3Energy/YBins = 1
i:Sc/SpeciesHelium3Energy/ZBins = 800
sv:Sc/SpeciesHelium3Energy/Report = 2 "Sum" "Standard_Deviation"
sv:Sc/SpeciesHelium3Energy/OnlyIncludeParticlesNamed = 1 "He3"
s:Sc/SpeciesHelium3Energy/OnlyIncludeParticlesOfGeneration = "Secondary"
