includeFile = carbon_200MeVu_water_species.txt

# Fragment-model calibration baseline. Promote to the 1e6 reference only after QA.
i:So/CarbonBeam/NumberOfHistoriesInRun = 100000
s:Sc/DepthEnergy/OutputFile = "output/species_development_total_energy_deposit"
s:Sc/DepthDose/OutputFile = "output/species_development_total_dose"
s:Sc/PrimaryC12Energy/OutputFile = "output/species_development_legacy_c12_energy_deposit"
s:Sc/SpeciesPrimaryC12Energy/OutputFile = "output/species_development_primary_c12_energy_deposit"
s:Sc/SpeciesSecondaryCarbonEnergy/OutputFile = "output/species_development_secondary_carbon_energy_deposit"
s:Sc/SpeciesBoronEnergy/OutputFile = "output/species_development_boron_energy_deposit"
s:Sc/SpeciesBerylliumEnergy/OutputFile = "output/species_development_beryllium_energy_deposit"
s:Sc/SpeciesLithiumEnergy/OutputFile = "output/species_development_lithium_energy_deposit"
s:Sc/SpeciesHeliumEnergy/OutputFile = "output/species_development_helium_energy_deposit"
s:Sc/SpeciesProtonEnergy/OutputFile = "output/species_development_proton_energy_deposit"
s:Sc/SpeciesElectronPositronEnergy/OutputFile = "output/species_development_electron_positron_energy_deposit"
s:Sc/SpeciesGammaEnergy/OutputFile = "output/species_development_gamma_energy_deposit"
s:Sc/SpeciesNeutronEnergy/OutputFile = "output/species_development_neutron_energy_deposit"
s:Sc/SpeciesDeuteronEnergy/OutputFile = "output/species_development_deuteron_energy_deposit"
s:Sc/SpeciesTritonEnergy/OutputFile = "output/species_development_triton_energy_deposit"
s:Sc/SpeciesAlphaEnergy/OutputFile = "output/species_development_alpha_energy_deposit"
s:Sc/SpeciesHelium3Energy/OutputFile = "output/species_development_helium3_energy_deposit"
