# Exact Schneider section 7 (HU 18..79) primary/cascade final-state
# diagnostic. This is the dominant soft-tissue composition in both validated
# head plans and avoids substituting the generic G4_TISSUE_SOFT_ICRP material.
includeFile = carbon_400MeVu_water_cascade_reactions.txt

sv:Ma/SchneiderSection07/Components = 9 "Hydrogen" "Carbon" "Nitrogen" "Oxygen" "Phosphorus" "Sulfur" "Chlorine" "Sodium" "Potassium"
uv:Ma/SchneiderSection07/Fractions = 9 0.103 0.134 0.030 0.723 0.002 0.002 0.002 0.002 0.002
d:Ma/SchneiderSection07/Density = 1.0 g/cm3
s:Ge/Phantom/Material = "SchneiderSection07"

i:Ts/NumberOfThreads = 40
i:So/CarbonBeam/NumberOfHistoriesInRun = 20000
i:Ts/ShowHistoryCountAtInterval = 5000
s:Sc/CascadeReactions/OutputFile = "output/cascade_e400_schneider_section07_20k_reactions"
