# CT full-plan matched primary/cascade final states.  Unlike the historical
# package, this uses the same g4ion-inclxx module as the validated CT TOPAS
# reference instead of g4ion-binarycascade.
includeFile = carbon_400MeVu_soft_tissue_cascade_reactions_20k.txt

# Radioactive decay is intentionally omitted from the offline prompt package:
# the runtime GPU does not transport delayed decays, and the cascade n-tuple
# otherwise associates delayed daughters with an earlier prompt interaction.
sv:Ph/Default/Modules = 6 "g4em-standard_opt4" "g4h-phy_QGSP_BIC_HP" "g4decay" "g4ion-inclxx" "g4h-elastic_HP" "g4stopping"
s:Sc/CascadeReactions/OutputFile = "output/cascade_e400_soft_tissue_inclxx_20k_reactions"
