# Shared BiGaussian emittance + fine BeamScorer for sigma(z).
# Include from carbon_200MeVu_water.txt then override energy in per-E files.

includeFile = carbon_200MeVu_water.txt

s:So/CarbonBeam/Type = "emittance"
s:So/CarbonBeam/Distribution = "BiGaussian"
d:So/CarbonBeam/SigmaX = 0.2 mm
u:So/CarbonBeam/SigmaXprime = 0.032
u:So/CarbonBeam/CorrelationX = -0.9411
d:So/CarbonBeam/SigmaY = 0.2 mm
u:So/CarbonBeam/SigmaYPrime = 0.032
u:So/CarbonBeam/CorrelationY = 0.9411
s:So/CarbonBeam/BeamPositionDistribution = "None"
s:So/CarbonBeam/BeamAngularDistribution = "None"

b:Sc/DepthEnergy/Active = "False"
b:Sc/DepthDose/Active = "False"
b:Sc/PrimaryC12Energy/Active = "False"

s:Ge/BeamScorer/Parent = "Phantom"
s:Ge/BeamScorer/Type = "TsBox"
s:Ge/BeamScorer/Material = "Water_75eV"
d:Ge/BeamScorer/HLX = 3.0 cm
d:Ge/BeamScorer/HLY = 3.0 cm
d:Ge/BeamScorer/HLZ = 20.0 cm
d:Ge/BeamScorer/TransX = 0. mm
d:Ge/BeamScorer/TransY = 0. mm
d:Ge/BeamScorer/TransZ = 0. mm
d:Ge/BeamScorer/MaxStepSize = 0.1 mm

s:Sc/Dose3D/Quantity = "DoseToMedium"
s:Sc/Dose3D/Component = "BeamScorer"
s:Sc/Dose3D/OutputFile = "output/emittance_reference_dose_3d"
s:Sc/Dose3D/OutputType = "csv"
s:Sc/Dose3D/IfOutputFileAlreadyExists = "Overwrite"
i:Sc/Dose3D/XBins = 120
i:Sc/Dose3D/YBins = 120
i:Sc/Dose3D/ZBins = 400
sv:Sc/Dose3D/Report = 1 "Sum"

s:Sc/ScorerIDD/Quantity = "EnergyDeposit"
s:Sc/ScorerIDD/Component = "BeamScorer"
s:Sc/ScorerIDD/OutputFile = "output/emittance_reference_idd"
s:Sc/ScorerIDD/OutputType = "csv"
s:Sc/ScorerIDD/IfOutputFileAlreadyExists = "Overwrite"
i:Sc/ScorerIDD/XBins = 1
i:Sc/ScorerIDD/YBins = 1
i:Sc/ScorerIDD/ZBins = 400
sv:Sc/ScorerIDD/Report = 1 "Sum"
