includeFile = carbon_material_tables_base.txt

# Query the exact isotope stopping powers in the same lung material used by
# the CT validation. One primary only initializes the Geant4 physics tables.
s:Ge/Sample/Material = "G4_LUNG_ICRP"
d:Ge/BeamPosition/TransZ = 0. mm
i:Ts/NumberOfThreads = 1
i:So/CarbonBeam/NumberOfHistoriesInRun = 1

s:Sc/IonStoppingPower/Quantity = "IonStoppingPowerNtuple"
s:Sc/IonStoppingPower/Component = "Sample"
s:Sc/IonStoppingPower/OutputFile = "output/ion_stopping_power_lung_g4_11_3_2"
s:Sc/IonStoppingPower/OutputType = "ASCII"
s:Sc/IonStoppingPower/IfOutputFileAlreadyExists = "Overwrite"
