includeFile = carbon_material_tables_base.txt
s:Ge/Sample/Material = "G4_BONE_COMPACT_ICRU"
# This scorer queries a static material table on the first primary step.
# Start inside the sample so its behavior is independent of TOPAS beam-axis
# conventions and of transport through the surrounding world material.
d:Ge/BeamPosition/TransZ = 0. mm
s:Sc/CarbonStoppingPower/Quantity = "CarbonStoppingPowerNtuple"
s:Sc/CarbonStoppingPower/Component = "Sample"
s:Sc/CarbonStoppingPower/OutputFile = "output/carbon_c12_stopping_power_bone"
s:Sc/CarbonStoppingPower/OutputType = "ASCII"
s:Sc/CarbonStoppingPower/IfOutputFileAlreadyExists = "Overwrite"
