includeFile = carbon_sobp_water_3cm_5_10cm_3mm.txt

# Preserve all 21 layer ratios while reducing the original 10M benchmark to
# 100k histories. Only L4 differs from the included 10M spot definition.
iv:Tf/Scatterer1/L4/Values = 21 1770 1648 1771 1865 1914 1937 1871 2055 3049 3171 3225 3452 3752 4024 4328 4512 5280 6291 7969 11852 24264

i:Ts/NumberOfThreads = 40
i:Ts/ShowHistoryCountAtInterval = 0

# Only the 0.5 mm depth scorers are needed for this first SOBP LET validation.
b:Sc/Dose3mm/Active = "False"
b:Sc/Energy3mm/Active = "False"
s:Sc/DepthEnergy/OutputFile = "output/sobp_letd_100k_total_energy_deposit"

s:Sc/SobpPrimaryC12LETd/Quantity = "myHadronLET"
s:Sc/SobpPrimaryC12LETd/Component = "Phantom"
s:Sc/SobpPrimaryC12LETd/OutputFile = "output/sobp_letd_100k_primary_c12"
s:Sc/SobpPrimaryC12LETd/OutputType = "csv"
s:Sc/SobpPrimaryC12LETd/IfOutputFileAlreadyExists = "Overwrite"
s:Sc/SobpPrimaryC12LETd/WeightBy = "dose"
u:Sc/SobpPrimaryC12LETd/Order = 1
i:Sc/SobpPrimaryC12LETd/XBins = 1
i:Sc/SobpPrimaryC12LETd/YBins = 1
i:Sc/SobpPrimaryC12LETd/ZBins = 300
i:Sc/SobpPrimaryC12LETd/OnlyIncludeParticlesOfAtomicNumber = 6
i:Sc/SobpPrimaryC12LETd/OnlyIncludeParticlesOfAtomicMass = 12
s:Sc/SobpPrimaryC12LETd/OnlyIncludeParticlesOfGeneration = "Primary"

s:Sc/SobpPrimaryC12Energy/Quantity = "EnergyDeposit"
s:Sc/SobpPrimaryC12Energy/Component = "Phantom"
s:Sc/SobpPrimaryC12Energy/OutputFile = "output/sobp_letd_100k_primary_c12_energy_deposit"
s:Sc/SobpPrimaryC12Energy/OutputType = "csv"
s:Sc/SobpPrimaryC12Energy/IfOutputFileAlreadyExists = "Overwrite"
i:Sc/SobpPrimaryC12Energy/XBins = 1
i:Sc/SobpPrimaryC12Energy/YBins = 1
i:Sc/SobpPrimaryC12Energy/ZBins = 300
i:Sc/SobpPrimaryC12Energy/OnlyIncludeParticlesOfAtomicNumber = 6
i:Sc/SobpPrimaryC12Energy/OnlyIncludeParticlesOfAtomicMass = 12
s:Sc/SobpPrimaryC12Energy/OnlyIncludeParticlesOfGeneration = "Primary"

s:Sc/SobpAllHadronLETd/Quantity = "myHadronLET"
s:Sc/SobpAllHadronLETd/Component = "Phantom"
s:Sc/SobpAllHadronLETd/OutputFile = "output/sobp_letd_100k_all_hadron"
s:Sc/SobpAllHadronLETd/OutputType = "csv"
s:Sc/SobpAllHadronLETd/IfOutputFileAlreadyExists = "Overwrite"
s:Sc/SobpAllHadronLETd/WeightBy = "dose"
u:Sc/SobpAllHadronLETd/Order = 1
i:Sc/SobpAllHadronLETd/XBins = 1
i:Sc/SobpAllHadronLETd/YBins = 1
i:Sc/SobpAllHadronLETd/ZBins = 300
