includeFile = carbon_sobp_water_3cm_5_10cm_letd_100k.txt

# Preserve the 21-layer fluence ratios at about 10k histories.
iv:Tf/Scatterer1/L4/Values = 21 177 165 177 187 191 194 187 205 305 317 323 345 375 402 433 451 528 629 797 1185 2426

# Existing LET maps are not needed.  Directly expose the denominator used by
# myHadronLET: local ion energy deposit + kinetic energy of emitted electrons.
b:Sc/SobpPrimaryC12LETd/Active = "False"
b:Sc/SobpPrimaryC12Energy/Active = "False"
b:Sc/SobpAllHadronLETd/Active = "False"
b:Sc/DepthEnergy/Active = "False"

s:Sc/SobpAllHadronDenominator/Quantity = "myHadronLET_Denominator"
s:Sc/SobpAllHadronDenominator/Component = "Phantom"
s:Sc/SobpAllHadronDenominator/OutputFile = "output/sobp_letd_denominator_10k_all"
s:Sc/SobpAllHadronDenominator/OutputType = "csv"
s:Sc/SobpAllHadronDenominator/IfOutputFileAlreadyExists = "Overwrite"
s:Sc/SobpAllHadronDenominator/WeightBy = "dose"
i:Sc/SobpAllHadronDenominator/XBins = 1
i:Sc/SobpAllHadronDenominator/YBins = 1
i:Sc/SobpAllHadronDenominator/ZBins = 300

s:Sc/SobpPrimaryC12Denominator/Quantity = "myHadronLET_Denominator"
s:Sc/SobpPrimaryC12Denominator/Component = "Phantom"
s:Sc/SobpPrimaryC12Denominator/OutputFile = "output/sobp_letd_denominator_10k_primary_c12"
s:Sc/SobpPrimaryC12Denominator/OutputType = "csv"
s:Sc/SobpPrimaryC12Denominator/IfOutputFileAlreadyExists = "Overwrite"
s:Sc/SobpPrimaryC12Denominator/WeightBy = "dose"
i:Sc/SobpPrimaryC12Denominator/XBins = 1
i:Sc/SobpPrimaryC12Denominator/YBins = 1
i:Sc/SobpPrimaryC12Denominator/ZBins = 300
i:Sc/SobpPrimaryC12Denominator/OnlyIncludeParticlesOfAtomicNumber = 6
i:Sc/SobpPrimaryC12Denominator/OnlyIncludeParticlesOfAtomicMass = 12
s:Sc/SobpPrimaryC12Denominator/OnlyIncludeParticlesOfGeneration = "Primary"
