includeFile = carbon_sobp_water_3cm_5_10cm_letd_heavy_recoil_100k.txt

# Preserve the 21-layer fluence ratios at 1/10 of the 100k diagnostic.
iv:Tf/Scatterer1/L4/Values = 21 177 165 177 187 191 194 187 205 305 317 323 345 375 402 433 451 528 629 797 1185 2426

# Only the heavy-recoil scorers are needed in this quick diagnostic.
b:Sc/SobpPrimaryC12LETd/Active = "False"
b:Sc/SobpPrimaryC12Energy/Active = "False"
b:Sc/SobpAllHadronLETd/Active = "False"
b:Sc/DepthEnergy/Active = "False"

s:Sc/SobpNitrogenLETd/OutputFile = "output/sobp_letd_heavy_10k_nitrogen"
s:Sc/SobpOxygenLETd/OutputFile = "output/sobp_letd_heavy_10k_oxygen"
s:Sc/SobpFluorineLETd/OutputFile = "output/sobp_letd_heavy_10k_fluorine"

# Dose-weight denominators make the N/O/F numerator directly comparable with
# GPU other_charged: numerator = LET_d * denominator in every depth bin.
s:Sc/SobpNitrogenDen/Quantity = "myHadronLET_Denominator"
s:Sc/SobpNitrogenDen/Component = "Phantom"
s:Sc/SobpNitrogenDen/OutputFile = "output/sobp_letd_heavy_10k_nitrogen_den"
s:Sc/SobpNitrogenDen/OutputType = "csv"
s:Sc/SobpNitrogenDen/IfOutputFileAlreadyExists = "Overwrite"
s:Sc/SobpNitrogenDen/WeightBy = "dose"
u:Sc/SobpNitrogenDen/Order = 1
i:Sc/SobpNitrogenDen/XBins = 1
i:Sc/SobpNitrogenDen/YBins = 1
i:Sc/SobpNitrogenDen/ZBins = 300
i:Sc/SobpNitrogenDen/OnlyIncludeParticlesOfAtomicNumber = 7
s:Sc/SobpNitrogenDen/OnlyIncludeParticlesOfGeneration = "Secondary"

s:Sc/SobpOxygenDen/Quantity = "myHadronLET_Denominator"
s:Sc/SobpOxygenDen/Component = "Phantom"
s:Sc/SobpOxygenDen/OutputFile = "output/sobp_letd_heavy_10k_oxygen_den"
s:Sc/SobpOxygenDen/OutputType = "csv"
s:Sc/SobpOxygenDen/IfOutputFileAlreadyExists = "Overwrite"
s:Sc/SobpOxygenDen/WeightBy = "dose"
u:Sc/SobpOxygenDen/Order = 1
i:Sc/SobpOxygenDen/XBins = 1
i:Sc/SobpOxygenDen/YBins = 1
i:Sc/SobpOxygenDen/ZBins = 300
i:Sc/SobpOxygenDen/OnlyIncludeParticlesOfAtomicNumber = 8
s:Sc/SobpOxygenDen/OnlyIncludeParticlesOfGeneration = "Secondary"

s:Sc/SobpFluorineDen/Quantity = "myHadronLET_Denominator"
s:Sc/SobpFluorineDen/Component = "Phantom"
s:Sc/SobpFluorineDen/OutputFile = "output/sobp_letd_heavy_10k_fluorine_den"
s:Sc/SobpFluorineDen/OutputType = "csv"
s:Sc/SobpFluorineDen/IfOutputFileAlreadyExists = "Overwrite"
s:Sc/SobpFluorineDen/WeightBy = "dose"
u:Sc/SobpFluorineDen/Order = 1
i:Sc/SobpFluorineDen/XBins = 1
i:Sc/SobpFluorineDen/YBins = 1
i:Sc/SobpFluorineDen/ZBins = 300
i:Sc/SobpFluorineDen/OnlyIncludeParticlesOfAtomicNumber = 9
s:Sc/SobpFluorineDen/OnlyIncludeParticlesOfGeneration = "Secondary"
