includeFile = carbon_sobp_water_3cm_5_10cm_letd_100k.txt

# Preserve the 21-layer weights but reduce the total to 10k histories.
iv:Tf/Scatterer1/L4/Values = 21 177 165 177 187 191 194 187 206 305 317 323 345 375 402 433 451 528 629 797 1185 2426

# Do not overwrite the formal 100k reference included above.
s:Sc/DepthEnergy/OutputFile = "output/sobp_isotope_diag_10k_total_energy"
s:Sc/SobpPrimaryC12LETd/OutputFile = "output/sobp_isotope_diag_10k_primary_c12"
s:Sc/SobpPrimaryC12Energy/OutputFile = "output/sobp_isotope_diag_10k_primary_energy"
s:Sc/SobpAllHadronLETd/OutputFile = "output/sobp_isotope_diag_10k_all_hadron"

# Standalone HadronLET denominators measure the exact dose weight used by the
# Z-group scorers: local energy deposit plus born delta-electron kinetic energy.
s:Sc/HydrogenDenominator/Quantity = "myHadronLET_Denominator"
s:Sc/HydrogenDenominator/Component = "Phantom"
s:Sc/HydrogenDenominator/OutputFile = "output/sobp_isotope_diag_10k_hydrogen_denominator"
s:Sc/HydrogenDenominator/OutputType = "csv"
s:Sc/HydrogenDenominator/IfOutputFileAlreadyExists = "Overwrite"
s:Sc/HydrogenDenominator/WeightBy = "dose"
i:Sc/HydrogenDenominator/XBins = 1
i:Sc/HydrogenDenominator/YBins = 1
i:Sc/HydrogenDenominator/ZBins = 300
i:Sc/HydrogenDenominator/OnlyIncludeParticlesOfAtomicNumber = 1
s:Sc/HydrogenDenominator/OnlyIncludeParticlesOfGeneration = "Secondary"

s:Sc/HeliumDenominator/Quantity = "myHadronLET_Denominator"
s:Sc/HeliumDenominator/Component = "Phantom"
s:Sc/HeliumDenominator/OutputFile = "output/sobp_isotope_diag_10k_helium_denominator"
s:Sc/HeliumDenominator/OutputType = "csv"
s:Sc/HeliumDenominator/IfOutputFileAlreadyExists = "Overwrite"
s:Sc/HeliumDenominator/WeightBy = "dose"
i:Sc/HeliumDenominator/XBins = 1
i:Sc/HeliumDenominator/YBins = 1
i:Sc/HeliumDenominator/ZBins = 300
i:Sc/HeliumDenominator/OnlyIncludeParticlesOfAtomicNumber = 2
s:Sc/HeliumDenominator/OnlyIncludeParticlesOfGeneration = "Secondary"

# Per-isotope denominators resolve both isotope composition and dose weighting.
s:Sc/ProtonDenominator/Quantity = "myHadronLET_Denominator"
s:Sc/ProtonDenominator/Component = "Phantom"
s:Sc/ProtonDenominator/OutputFile = "output/sobp_isotope_diag_10k_proton_denominator"
s:Sc/ProtonDenominator/OutputType = "csv"
s:Sc/ProtonDenominator/IfOutputFileAlreadyExists = "Overwrite"
s:Sc/ProtonDenominator/WeightBy = "dose"
i:Sc/ProtonDenominator/XBins = 1
i:Sc/ProtonDenominator/YBins = 1
i:Sc/ProtonDenominator/ZBins = 300
i:Sc/ProtonDenominator/OnlyIncludeParticlesOfAtomicNumber = 1
i:Sc/ProtonDenominator/OnlyIncludeParticlesOfAtomicMass = 1
s:Sc/ProtonDenominator/OnlyIncludeParticlesOfGeneration = "Secondary"

s:Sc/DeuteronDenominator/Quantity = "myHadronLET_Denominator"
s:Sc/DeuteronDenominator/Component = "Phantom"
s:Sc/DeuteronDenominator/OutputFile = "output/sobp_isotope_diag_10k_deuteron_denominator"
s:Sc/DeuteronDenominator/OutputType = "csv"
s:Sc/DeuteronDenominator/IfOutputFileAlreadyExists = "Overwrite"
s:Sc/DeuteronDenominator/WeightBy = "dose"
i:Sc/DeuteronDenominator/XBins = 1
i:Sc/DeuteronDenominator/YBins = 1
i:Sc/DeuteronDenominator/ZBins = 300
i:Sc/DeuteronDenominator/OnlyIncludeParticlesOfAtomicNumber = 1
i:Sc/DeuteronDenominator/OnlyIncludeParticlesOfAtomicMass = 2
s:Sc/DeuteronDenominator/OnlyIncludeParticlesOfGeneration = "Secondary"

s:Sc/TritonDenominator/Quantity = "myHadronLET_Denominator"
s:Sc/TritonDenominator/Component = "Phantom"
s:Sc/TritonDenominator/OutputFile = "output/sobp_isotope_diag_10k_triton_denominator"
s:Sc/TritonDenominator/OutputType = "csv"
s:Sc/TritonDenominator/IfOutputFileAlreadyExists = "Overwrite"
s:Sc/TritonDenominator/WeightBy = "dose"
i:Sc/TritonDenominator/XBins = 1
i:Sc/TritonDenominator/YBins = 1
i:Sc/TritonDenominator/ZBins = 300
i:Sc/TritonDenominator/OnlyIncludeParticlesOfAtomicNumber = 1
i:Sc/TritonDenominator/OnlyIncludeParticlesOfAtomicMass = 3
s:Sc/TritonDenominator/OnlyIncludeParticlesOfGeneration = "Secondary"

s:Sc/He3Denominator/Quantity = "myHadronLET_Denominator"
s:Sc/He3Denominator/Component = "Phantom"
s:Sc/He3Denominator/OutputFile = "output/sobp_isotope_diag_10k_he3_denominator"
s:Sc/He3Denominator/OutputType = "csv"
s:Sc/He3Denominator/IfOutputFileAlreadyExists = "Overwrite"
s:Sc/He3Denominator/WeightBy = "dose"
i:Sc/He3Denominator/XBins = 1
i:Sc/He3Denominator/YBins = 1
i:Sc/He3Denominator/ZBins = 300
i:Sc/He3Denominator/OnlyIncludeParticlesOfAtomicNumber = 2
i:Sc/He3Denominator/OnlyIncludeParticlesOfAtomicMass = 3
s:Sc/He3Denominator/OnlyIncludeParticlesOfGeneration = "Secondary"

s:Sc/He4Denominator/Quantity = "myHadronLET_Denominator"
s:Sc/He4Denominator/Component = "Phantom"
s:Sc/He4Denominator/OutputFile = "output/sobp_isotope_diag_10k_he4_denominator"
s:Sc/He4Denominator/OutputType = "csv"
s:Sc/He4Denominator/IfOutputFileAlreadyExists = "Overwrite"
s:Sc/He4Denominator/WeightBy = "dose"
i:Sc/He4Denominator/XBins = 1
i:Sc/He4Denominator/YBins = 1
i:Sc/He4Denominator/ZBins = 300
i:Sc/He4Denominator/OnlyIncludeParticlesOfAtomicNumber = 2
i:Sc/He4Denominator/OnlyIncludeParticlesOfAtomicMass = 4
s:Sc/He4Denominator/OnlyIncludeParticlesOfGeneration = "Secondary"

# Directly measure the delta-electron term used in each group denominator.
s:Sc/HydrogenDeltaElectron/Quantity = "CarbonDeltaElectronEnergy"
s:Sc/HydrogenDeltaElectron/Component = "Phantom"
s:Sc/HydrogenDeltaElectron/OutputFile = "output/sobp_isotope_diag_10k_hydrogen_delta"
s:Sc/HydrogenDeltaElectron/OutputType = "csv"
s:Sc/HydrogenDeltaElectron/IfOutputFileAlreadyExists = "Overwrite"
i:Sc/HydrogenDeltaElectron/XBins = 1
i:Sc/HydrogenDeltaElectron/YBins = 1
i:Sc/HydrogenDeltaElectron/ZBins = 300
i:Sc/HydrogenDeltaElectron/OnlyIncludeParticlesOfAtomicNumber = 1
s:Sc/HydrogenDeltaElectron/OnlyIncludeParticlesOfGeneration = "Secondary"

s:Sc/HeliumDeltaElectron/Quantity = "CarbonDeltaElectronEnergy"
s:Sc/HeliumDeltaElectron/Component = "Phantom"
s:Sc/HeliumDeltaElectron/OutputFile = "output/sobp_isotope_diag_10k_helium_delta"
s:Sc/HeliumDeltaElectron/OutputType = "csv"
s:Sc/HeliumDeltaElectron/IfOutputFileAlreadyExists = "Overwrite"
i:Sc/HeliumDeltaElectron/XBins = 1
i:Sc/HeliumDeltaElectron/YBins = 1
i:Sc/HeliumDeltaElectron/ZBins = 300
i:Sc/HeliumDeltaElectron/OnlyIncludeParticlesOfAtomicNumber = 2
s:Sc/HeliumDeltaElectron/OnlyIncludeParticlesOfGeneration = "Secondary"

# Per-isotope LET_d. Z and A filters are both applied.
s:Sc/ProtonLETd/Quantity = "myHadronLET"
s:Sc/ProtonLETd/Component = "Phantom"
s:Sc/ProtonLETd/OutputFile = "output/sobp_isotope_diag_10k_proton"
s:Sc/ProtonLETd/OutputType = "csv"
s:Sc/ProtonLETd/IfOutputFileAlreadyExists = "Overwrite"
s:Sc/ProtonLETd/WeightBy = "dose"
u:Sc/ProtonLETd/Order = 1
i:Sc/ProtonLETd/XBins = 1
i:Sc/ProtonLETd/YBins = 1
i:Sc/ProtonLETd/ZBins = 300
i:Sc/ProtonLETd/OnlyIncludeParticlesOfAtomicNumber = 1
i:Sc/ProtonLETd/OnlyIncludeParticlesOfAtomicMass = 1
s:Sc/ProtonLETd/OnlyIncludeParticlesOfGeneration = "Secondary"

s:Sc/DeuteronLETd/Quantity = "myHadronLET"
s:Sc/DeuteronLETd/Component = "Phantom"
s:Sc/DeuteronLETd/OutputFile = "output/sobp_isotope_diag_10k_deuteron"
s:Sc/DeuteronLETd/OutputType = "csv"
s:Sc/DeuteronLETd/IfOutputFileAlreadyExists = "Overwrite"
s:Sc/DeuteronLETd/WeightBy = "dose"
u:Sc/DeuteronLETd/Order = 1
i:Sc/DeuteronLETd/XBins = 1
i:Sc/DeuteronLETd/YBins = 1
i:Sc/DeuteronLETd/ZBins = 300
i:Sc/DeuteronLETd/OnlyIncludeParticlesOfAtomicNumber = 1
i:Sc/DeuteronLETd/OnlyIncludeParticlesOfAtomicMass = 2
s:Sc/DeuteronLETd/OnlyIncludeParticlesOfGeneration = "Secondary"

s:Sc/TritonLETd/Quantity = "myHadronLET"
s:Sc/TritonLETd/Component = "Phantom"
s:Sc/TritonLETd/OutputFile = "output/sobp_isotope_diag_10k_triton"
s:Sc/TritonLETd/OutputType = "csv"
s:Sc/TritonLETd/IfOutputFileAlreadyExists = "Overwrite"
s:Sc/TritonLETd/WeightBy = "dose"
u:Sc/TritonLETd/Order = 1
i:Sc/TritonLETd/XBins = 1
i:Sc/TritonLETd/YBins = 1
i:Sc/TritonLETd/ZBins = 300
i:Sc/TritonLETd/OnlyIncludeParticlesOfAtomicNumber = 1
i:Sc/TritonLETd/OnlyIncludeParticlesOfAtomicMass = 3
s:Sc/TritonLETd/OnlyIncludeParticlesOfGeneration = "Secondary"

s:Sc/He3LETd/Quantity = "myHadronLET"
s:Sc/He3LETd/Component = "Phantom"
s:Sc/He3LETd/OutputFile = "output/sobp_isotope_diag_10k_he3"
s:Sc/He3LETd/OutputType = "csv"
s:Sc/He3LETd/IfOutputFileAlreadyExists = "Overwrite"
s:Sc/He3LETd/WeightBy = "dose"
u:Sc/He3LETd/Order = 1
i:Sc/He3LETd/XBins = 1
i:Sc/He3LETd/YBins = 1
i:Sc/He3LETd/ZBins = 300
i:Sc/He3LETd/OnlyIncludeParticlesOfAtomicNumber = 2
i:Sc/He3LETd/OnlyIncludeParticlesOfAtomicMass = 3
s:Sc/He3LETd/OnlyIncludeParticlesOfGeneration = "Secondary"

s:Sc/He4LETd/Quantity = "myHadronLET"
s:Sc/He4LETd/Component = "Phantom"
s:Sc/He4LETd/OutputFile = "output/sobp_isotope_diag_10k_he4"
s:Sc/He4LETd/OutputType = "csv"
s:Sc/He4LETd/IfOutputFileAlreadyExists = "Overwrite"
s:Sc/He4LETd/WeightBy = "dose"
u:Sc/He4LETd/Order = 1
i:Sc/He4LETd/XBins = 1
i:Sc/He4LETd/YBins = 1
i:Sc/He4LETd/ZBins = 300
i:Sc/He4LETd/OnlyIncludeParticlesOfAtomicNumber = 2
i:Sc/He4LETd/OnlyIncludeParticlesOfAtomicMass = 4
s:Sc/He4LETd/OnlyIncludeParticlesOfGeneration = "Secondary"
